//
// I/O Devices
//

stimulus_display 'Stimulus Display' (0, 0, 0)

iodevice/usbhid_generic joystick (
       preferred_location_id                = 339820544
       usage_page                           = 1
       usage                                = 4
       log_all_input_values                 = NO
       autostart                            = YES
   ){
   iochannel/usbhid_generic_input_channel (
       usage_page                           = 1
       usage                                = 49
       value                                = IO_joystickY_raw
   )
   iochannel/usbhid_generic_input_channel (
       usage_page                           = 1
       usage                                = 48
       value                                = IO_joystickX_raw
   )
}

iodevice/usbhid_generic joystick2 (
       preferred_location_id                = 339808256
       usage_page                           = 1
       usage                                = 4
       log_all_input_values                 = NO
       autostart                            = YES
   ){
   iochannel/usbhid_generic_input_channel (
       usage_page                           = 1
       usage                                = 49
       value                                = IO_joystickY2_raw
   )
   iochannel/usbhid_generic_input_channel (
       usage_page                           = 1
       usage                                = 48
       value                                = IO_joystickX2_raw
   )
}

filter/joystick_calibrator joystick_norm (
    maxX                                    = IO_joystickX_raw_max
    minX                                    = IO_joystickX_raw_min
    maxY                                    = IO_joystickY_raw_min
    minY                                    = IO_joystickY_raw_max
    rawX                                    = IO_joystickX_raw
    rawY                                    = IO_joystickY_raw
    strength                                = IO_joystickStrength
    direction                               = IO_joystickDirection
    normX                                   = IO_joystickX_norm
    normY                                   = IO_joystickY_norm
    trigger                                 = IO_joystickTrigger
    capStrength                             = YES
    )

filter/joystick_calibrator joystick2_norm (
    maxX                                    = IO_joystickX2_raw_max
    minX                                    = IO_joystickX2_raw_min
    maxY                                    = IO_joystickY2_raw_min 
    minY                                    = IO_joystickY2_raw_max 
    rawX                                    = IO_joystickX2_raw
    rawY                                    = IO_joystickY2_raw
    strength                                = IO_joystickStrength2
    direction                               = IO_joystickDirection2
    normX                                   = IO_joystickX2_norm
    normY                                   = IO_joystickY2_norm
    trigger                                 = IO_joystickTrigger2
    capStrength                             = YES
    )

//
// Variables
//

group INFO {
    var INFO_task                           = 0
    var INFO_date                           = 'fill_me' // fill manually as backup
    var INFO_block                          = 'fill_me'
    var INFO_setup                          = 'fill_me'
    var INFO_subject                        = 'fill_me' // dyadic: [psycho4psycho3]
    var INFO_StateCounter                   = 0
    var INFO_CoherenceStateCounter          = 0
    var INFO_TargetCounter                  = 0
    var INFO_TrialTargetCounter             = 0 {
        INFO_performance_percent            = INFO_Score / INFO_TargetCounter
        INFO_performance_percent2           = INFO_Score2 / INFO_TargetCounter
    }
    var INFO_HitCounter                     = 0
    var INFO_HitCounter2                    = 0
    var INFO_ErrorCounter                   = 0
    var INFO_ErrorCounter2                  = 0
    var INFO_Score                          = 0
    var INFO_Score2                         = 0 
    var INFO_TrialScore                     = 0
    var INFO_TrialScore2                    = 0
    var INFO_performance_percent            = 0
    var INFO_performance_percent2           = 0
}

group CTRL {
    var CTRL_RequiredHitNo                  = 0
    var CTRL_NoTargets                      = 0
	var CTRL_NoStates                       = 0
    var CTRL_NoCoherenceStates              = 0 
	var CTRL_state_min_ms                   = 0 
    var CTRL_state_max_ms                   = 0
    var CTRL_state_duration_ms              = 0
    var CTRL_TargetDelay_ms                 = 0
    var CTRL_snr_list                       = [0, .08, .132, .2178, .3594, .593, .9784] // factor 1.65
    var CTRL_directionChange_list           = [15, 45, 90, 135]
    var CTRL_ITI_ms                         = 0
    var CTRL_change_mangitude               = 0
    var CTRL_cpr_treshold                   = 0
    var CTRL_Xmax                           = 15.2024
    var CTRL_Ymax                           = 11.4018
    var CTRL_show_agent                     = 0

    var CTRL_arc_alpha                      = 0
    var CTRL_arc_flag                       = 0
    var CTRL_arc2_flag                      = 0
    var CTRL_arc2_alpha                     = 0 {
    	CTRL_indicator2_alpha               = CTRL_arc2_alpha
    }
    var CTRL_arc_size                       = 0
    var CTRL_arcMask_size                   = 0
    var CTRL_arc2_size                      = 0
    var CTRL_arcMask2_size                  = 0
    var CTRL_arc_position                   = 0

	var CTRL_start_area_size                = 0 
    var CTRL_start_area_alpha               = 0
    var CTRL_start_area_flag                = 0
    
    var CTRL_target_idx                     = 0
    var CTRL_target_size                    = 0
    var CTRL_target_deg                     = 0
    var CTRL_target_duration_ms             = 0
    var CTRL_target_ban_duration_ms         = 0
    var CTRL_target_direction               = 0
    var CTRL_target_flag                    = 0
    var CTRL_target2_flag                   = 0
    var CTRL_target3_flag                   = 0
    var CTRL_target4_flag                   = 0
    var CTRL_target_x                       = 0
    var CTRL_target2_x                      = 0
    var CTRL_target3_x                      = 0
    var CTRL_target4_x                      = 0
    var CTRL_target_y                       = 0    
    var CTRL_target2_y                      = 0    
    var CTRL_target3_y                      = 0    
    var CTRL_target4_y                      = 0    
    var CTRL_target_alpha                   = 0
    var CTRL_target_offset                  = 0
    var CTRL_target_ITI_ms                  = 0
    var CTRL_target_delay_min_ms            = 0
    var CTRL_target_delay_max_ms            = 0
    
    var CTRL_feedback_alpha 				= 0
    var CTRL_feedback_ms                    = 0
    var CTRL_feedback_flag                  = 0
    var CTRL_feedback_bar_height            = 0
    var CTRL_feedback2_bar_height           = 0
    var CTRL_feedback_bar_width             = 0
    var CTRL_feedback_offset_x              = 0
    var CTRL_feedback_frame_width           = 0
    var CTRL_feedback_frame_height          = 0
    var CTRL_feedback_rotation              = 0
    var CTRL_feedback_target_bar_height     = 0
    var CTRL_feedback_nBar                  = 0

    var CTRL_hit_flag 					    = 0
    var CTRL_miss_flag                      = 0
    var CTRL_hit_flag2                      = 0
    var CTRL_miss_flag2                     = 0

    var CTRL_response_window_ms             = 0
    var CTRL_rdp_duration_ms                = 0

    var CTRL_cursor_radius                  = .5

    var CTRL_indicator_size                 = 0
    var CTRL_indicator_offset               = 0
    var CTRL_indicator_alpha                = 0
    var CTRL_indicator2_offset              = 0
    var CTRL_indicator2_alpha               = 0
    
    var CTRL_fixationWidth_dva              = 100
    var CTRL_fixation_duration_ms           = 500
    var CTRL_fixationDotSize_dva            = .3
    var CTRL_fixation_alpha                 = 1
    var CTRL_fixation2_alpha                = 1
    var CTRL_fixation_size                  = .3
    var CTRL_fixation_break_flag            = 0
    var CTRL_fixation_penalty_flag          = 0
    var CTRL_fixation2_break_flag           = 0
    var CTRL_fixation2_penalty_flag         = 0
    var CTRL_minFixBreak_duration_ms        = 300
    var CTRL_fixBreak_penalty_duration_ms   = 0

    var CTRL_scoreBar_width                 = 0
    var CTRL_scoreBar_size                  = 18.2
    var CTRL_scoreBar_alpha                 = .5
    var CTRL_scoreBarBackground_alpha       = .15
    var CTRL_scoreBar2_width                = 0
    var CTRL_scoreBar2_size                 = 19.4
    var CTRL_scoreBar2_alpha                = .5
    var CTRL_scoreBarBackground2_alpha      = .15
    var CTRL_barwidth                       = .9
}

group TRIAL {
    var TRIAL_start                         = 0
    var TRIAL_end                           = 0
    var TRIAL_reactionEvent                 = 0
    var TRIAL_reactionEvent_ts              = 0
    var TRIAL_reactionTrigger               = 0
    var TRIAL_reactionTrigger_ts            = 0
    var TRIAL_RT                            = 0
    var TRIAL_align                         = 0
    var TRIAL_type                          = 0
    var TRIAL_outcome                       = 0
    var TRIAL_outcome2                      = 0
}

group TMP {
    var pi                                  = 3.14159265359
    var TMP_dice 							= 0
	var TMP_RDPdir 							= 0
	var TMP_normJoyDir   					= 0
 	var TMP_accuracy 						= 0
    var TMP_score                           = 0 

    var TMP_normJoyDir2                     = 0
    var TMP_accuracy2                       = 0
    var TMP_score2                          = 0
    
    var TMP_NoStates                        = 0
    var TMP_NoCoherenceStates               = 0
    var TMP_state_min_ms                    = 0
    var TMP_state_max_ms                    = 0
    var TMP_snr_list                        = 0
    var TMP_directionChange_list            = 0
    var TMP_target_ITI_ms                   = 0
    var TMP_target_ban_duration_ms          = 0
    var TMP_sample_counter                  = 0
    var TMP_show_agent                      = 0

    var fixationPoint_posY                  = 0
    var fixationPoint_posX                  = 0 
    var cnt                                 = 0
    var lst_value                           = 0
}

group ML {
    var ML_sync                             = 0
}

group EYE { // CHANGE VARIABLE NAMES
    var EYE_rightX_raw                      = (float)(0)(persistant = YES)
    var EYE_rightY_raw                      = (float)(0)(persistant = YES)
    var EYE_leftX_raw                       = (float)(0)(persistant = YES)
    var EYE_leftY_raw                       = (float)(0)(persistant = YES)
    var EYE_x_raw                           = (float)(0)(persistant = YES)
    var EYE_y_raw                           = (float)(0)(persistant = YES)
    var EYE_hrefRightX                      = (integer)(0)(persistant = YES)
    var EYE_hrefRightY                      = (integer)(0)(persistant = YES)
    var EYE_hrefLeftX                       = (integer)(0)(persistant = YES)
    var EYE_hrefLeftY                       = (integer)(0)(persistant = YES)
    var EYE_pupilRightX                     = (integer)(0)(persistant = YES)
    var EYE_pupilRightY                     = (integer)(0)(persistant = YES)
    var EYE_pupilLeftX                      = (integer)(0)(persistant = YES)
    var EYE_pupilLeftY                      = (integer)(0)(persistant = YES)
    var EYE_pupilRightSize                  = (integer)(0)(persistant = YES)
    var EYE_pupilLeftSize                   = (integer)(0)(persistant = YES)
    var EYE_sampleTime                      = (integer)0 (persistant = YES)
    var EYE_x_dva                           = (integer)0 (persistant = YES)
    var EYE_y_dva                           = (integer)0 (persistant = YES)
    var EYE_saccade                         = (integer)0 (persistant = YES)
    
    var EYE_rightX2_raw                     = (float)(0)(persistant = YES)
    var EYE_rightY2_raw                     = (float)(0)(persistant = YES)
    var EYE_leftX2_raw                      = (float)(0)(persistant = YES)
    var EYE_leftY2_raw                      = (float)(0)(persistant = YES)
    var EYE_x2_raw                          = (float)(0)(persistant = YES)
    var EYE_y2_raw                          = (float)(0)(persistant = YES)
    var EYE_hrefRightX2                     = (integer)(0)(persistant = YES)
    var EYE_hrefRightY2                     = (integer)(0)(persistant = YES)
    var EYE_hrefLeftX2                      = (integer)(0)(persistant = YES)
    var EYE_hrefLeftY2                      = (integer)(0)(persistant = YES)
    var EYE_pupilRightX2                    = (integer)(0)(persistant = YES)
    var EYE_pupilRightY2                    = (integer)(0)(persistant = YES)
    var EYE_pupilLeftX2                     = (integer)(0)(persistant = YES)
    var EYE_pupilLeftY2                     = (integer)(0)(persistant = YES)
    var EYE_pupilRightSize2                 = (integer)(0)(persistant = YES)
    var EYE_pupilLeftSize2                  = (integer)(0)(persistant = YES)
    var EYE_sampleTime2                     = (integer)0 (persistant = YES)
    var EYE_x2_dva                          = (integer)0 (persistant = YES)
    var EYE_y2_dva                          = (integer)0 (persistant = YES)
    var EYE_saccade2                        = (integer)0 (persistant = YES)

    var local_posX                          = 0 (scope = local)
    var local_posY                          = 0 (scope = local)
}

group RDP {
    var RDP_direction                       = 0 {
        if (TRIAL_start > TRIAL_end) {
    		// Restrict to circular space [0:359]
    		TMP_RDPdir 					    = (RDP_direction + 360) % 360
        }
    }
    var RDP_radius                          = 8
    var RDP_y                               = 0
    var RDP_x                               = 0
    var RDP_density                         = 1
    var RDP_dotsize                         = .3
    var RDP_speed                           = 8
    var RDP_coherence                       = 0
    var RDP_lifetime                        = (1/120) * 60 * 1000 // 25 frames - 208ms
    var RDP_alpha                        	= 1
    var RDP_seed                            = 1
}

group COL {
    var COL_player1_r                       = 0
    var COL_player1_g                       = 0
    var COL_player1_b                       = 0
    var COL_player2_r                       = 0
    var COL_player2_g                       = 0
    var COL_player2_b                       = 0
    var COL_bg_r                            = 0
    var COL_bg_g                            = 0
    var COL_bg_b                            = 0
    var COL_rdp_r                           = 1
    var COL_rdp_g                           = 1
    var COL_rdp_b                           = 1
    var COL_start_area_r                    = 0
    var COL_start_area_g                    = 0
    var COL_start_area_b                    = 0
    var COL_cursor_r 						= 1
    var COL_cursor_g 						= 1
    var COL_cursor_b 						= 1
    var COL_arc_r                           = 0
    var COL_arc_g                           = 0
    var COL_arc_b                           = 0
    var COL_arc2_r                          = 0
    var COL_arc2_g                          = 0
    var COL_arc2_b                          = 0    
    var COL_target_r                        = 1
    var COL_target_g                        = 1
    var COL_target_b                        = 0
    var COL_feedback_r                      = 0
    var COL_feedback_g                      = 0
    var COL_feedback_b                      = 0
    var COL_feedback2_r                     = 0
    var COL_feedback2_g                     = 0
    var COL_feedback2_b                     = 0
    var COL_fix_r                           = 1
    var COL_fix_g                           = 1
    var COL_fix_b                           = 1
    var COL_fix2_r                          = 1
    var COL_fix2_g                          = 1
    var COL_fix2_b                          = 1
    var COL_scoreBar_r                      = 0
    var COL_scoreBar_g                      = 0
    var COL_scoreBar_b                      = 0
    var COL_scoreBar2_r                     = 0
    var COL_scoreBar2_g                     = 0
    var COL_scoreBar2_b                     = 0
    var COL_targetBar_r                     = .3
    var COL_targetBar_g                     = .3
    var COL_targetBar_b                     = .3
}

group IO {
    // Measure manually [psycho4]
    var IO_joystickX_raw_max                = 16383
    var IO_joystickX_raw_min                = 0
    var IO_joystickY_raw_max                = 16383
    var IO_joystickY_raw_min                = 0
    var IO_joystickTrigger                  = false
    var cancelTrigger                       = false

    // Measure manually [psycho3]
    var IO_joystickX2_raw_max               = 16383
    var IO_joystickX2_raw_min               = 0
    var IO_joystickY2_raw_max               = 16383
    var IO_joystickY2_raw_min               = 0
    var IO_joystickTrigger2                 = false

    var IO_fixation_flag                    = true
    var IO_fixation2_flag                   = true
    var IO_calib_fixation_flag              = 0
    var IO_calib_fixation2_flag             = 0
    var IO_arc_width                    	= 0
	var IO_arc_trigger_min               	= 0
    var IO_arc_trigger_max               	= 0  
	var IO_cursor_x                       	= 0
    var IO_cursor_y                       	= 0
    var IO_joystickX_norm                   = 0
    var IO_joystickY_norm                   = 0
    var IO_joystickX_raw                 	= 0 {
            IO_cursor_x                     = (((IO_joystickX_raw/511.5)-1) * CTRL_Xmax) + RDP_x
    }
    var IO_joystickY_raw                    = 0 {
            IO_cursor_y                     = (((IO_joystickY_raw/511.5)-1) * CTRL_Ymax) + RDP_y
    }
    var IO_joystickStrength                 = 0 {                     

        if (TRIAL_start > TRIAL_end) {
            // Set arc width
      		IO_arc_width                    = 180 - (180 * IO_joystickStrength) 
      		
      		// Fix minimum arc size
            if (IO_arc_width < CTRL_target_deg) {
             	IO_arc_width        		= CTRL_target_deg
          	} 

            // Target
            if (TRIAL_reactionTrigger == 0) {
            CTRL_target_idx                 = disc_rand(0,99) // Show target? --> Turn into macro...
            }
        }
    }
    var IO_joystickDirection                = 0 {
        if (TRIAL_start > TRIAL_end) {
        	// Calculate tracking accuracy and reward
    		TMP_normJoyDir                  = (int)(((int)IO_joystickDirection + (180-TMP_RDPdir) + 360) % 360) 
            TMP_accuracy           			= abs(1 - abs(TMP_RDPdir - IO_joystickDirection) / 180)
            
            // Calculate reward score
            if (IO_joystickStrength <= 1) {
                TMP_score                   = IO_joystickStrength * TMP_accuracy
            }

            // Cap at maximum
            if (IO_joystickStrength > 1) {
                TMP_score                   = 1 * TMP_accuracy
            }
            
            // Compute trigger boundaries & flag
            IO_arc_trigger_min              = (int)(((int)(TMP_RDPdir - (IO_arc_width/2) + 360) % 360) + ((180-TMP_RDPdir) + 360)) % 360
            IO_arc_trigger_max              = (int)(((int)(TMP_RDPdir + (IO_arc_width/2) + 360) % 360) + ((180-TMP_RDPdir) + 360)) % 360
            CTRL_arc_flag                   = (TMP_normJoyDir >= IO_arc_trigger_min) && (TMP_normJoyDir <= IO_arc_trigger_max)     
        }
    }

    var IO_arc2_width                       = 0
    var IO_arc2_trigger_min                 = 0
    var IO_arc2_trigger_max                 = 0  
    var IO_cursor2_x                        = 0
    var IO_cursor2_y                        = 0
    var IO_joystickX2_norm                  = (float)0
    var IO_joystickY2_norm                  = (float)0
    var IO_joystickX2_raw                   = (integer)0
    var IO_joystickY2_raw                   = (integer)0
    var IO_joystickStrength2                = 0 {                     

        if (TRIAL_start > TRIAL_end) {
            // Set arc width
            IO_arc2_width                   = 180 - (180 * IO_joystickStrength2) 
            
            // Fix minimum arc size
            if (IO_arc2_width < CTRL_target_deg) {
                IO_arc2_width               = CTRL_target_deg
            }
        } 
    }
    var IO_joystickDirection2               = 0 {
        if (TRIAL_start > TRIAL_end) {
            // Calculate tracking accuracy and reward
            TMP_normJoyDir2                 = (int)(((int)IO_joystickDirection2 + (180-TMP_RDPdir) + 360) % 360) 
            TMP_accuracy2                   = abs(1 - abs(TMP_RDPdir - IO_joystickDirection2) / 180)
            
            // Calculate reward score
            if (IO_joystickStrength2 <= 1) {
                TMP_score2                   = IO_joystickStrength2 * TMP_accuracy2
            }

            // Cap at maximum
            if (IO_joystickStrength2 > 1) {
                TMP_score2                   = 1 * TMP_accuracy2
            }
            
            // Compute trigger boundaries & flag
            IO_arc2_trigger_min             = (int)(((int)(TMP_RDPdir - (IO_arc2_width/2) + 360) % 360) + ((180-TMP_RDPdir) + 360)) % 360
            IO_arc2_trigger_max             = (int)(((int)(TMP_RDPdir + (IO_arc2_width/2) + 360) % 360) + ((180-TMP_RDPdir) + 360)) % 360
            CTRL_arc2_flag                  = (TMP_normJoyDir2 >= IO_arc2_trigger_min) && (TMP_normJoyDir2 <= IO_arc2_trigger_max)   
        }
    }
}


//
// Sounds
//

wav_file Acquire_sound ('./sounds/acquire.wav')
wav_file Reward_sound ('./sounds/reward.wav')
wav_file Failure_sound ('./sounds/failure2.wav')
wav_file End_sound ('./sounds/Defeat Bowser.wav')
wav_file Reward1R_sound ('./sounds/1R.wav')
wav_file Reward1L_sound ('./sounds/1L.wav')
wav_file Reward2R_sound ('./sounds/2R.wav')
wav_file Reward2L_sound ('./sounds/2L.wav')
wav_file Reward3R_sound ('./sounds/3R.wav')
wav_file Reward3L_sound ('./sounds/3L.wav')
wav_file Reward4R_sound ('./sounds/4R.wav')
wav_file Reward4L_sound ('./sounds/4L.wav')
wav_file Reward5R_sound ('./sounds/5R.wav')
wav_file Reward5L_sound ('./sounds/5L.wav')
wav_file Reward6R_sound ('./sounds/6R.wav')
wav_file Reward6L_sound ('./sounds/6L.wav')
wav_file Reward7R_sound ('./sounds/7R.wav')
wav_file Reward7L_sound ('./sounds/7L.wav')
wav_file Reward8R_sound ('./sounds/8R.wav')
wav_file Reward8L_sound ('./sounds/8L.wav')

//
// Stimuli
//

blank_screen Background (
    color                       			= COL_bg_r,COL_bg_g,COL_bg_b
    )

stimulus/advstimulus fixationPoint_ServerSetup (
    trigger_width                           = CTRL_fixationWidth_dva
    trigger_watch_x                         = EYE_x_dva
    trigger_watch_y                         = EYE_y_dva
    trigger_flag                            = IO_calib_fixation_flag
    x_size                                  = CTRL_fixationDotSize_dva
    y_size                                  = CTRL_fixationDotSize_dva
    x_position                              = fixationPoint_posX
    y_position                              = fixationPoint_posY
    shape                                   = format("circle")
    color                                   = 1,1,1
    rotation                                = 0
    alpha_multiplier                        = 1
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus fixationPoint_StreamSetup (
    trigger_width                           = CTRL_fixationWidth_dva
    trigger_watch_x                         = EYE_x2_dva
    trigger_watch_y                         = EYE_y2_dva
    trigger_flag                            = IO_calib_fixation2_flag
    x_size                                  = CTRL_fixationDotSize_dva
    y_size                                  = CTRL_fixationDotSize_dva
    x_position                              = fixationPoint_posX
    y_position                              = fixationPoint_posY
    shape                                   = format("circle")
    color                                   = 1,1,1
    rotation                                = 0
    alpha_multiplier                        = 1
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus fixationCross (
    trigger_width                           = CTRL_fixationWidth_dva
    trigger_watch_x                         = EYE_x_dva
    trigger_watch_y                         = EYE_y_dva
    trigger_flag                            = IO_fixation_flag
    x_size                                  = CTRL_fixation_size
    y_size                                  = CTRL_fixation_size
    x_position                              = RDP_x
    y_position                              = RDP_y
    shape                                   = format("cross")
    color                                   = COL_fix_r,COL_fix_g,COL_fix_b
    rotation                                = 0
    alpha_multiplier                        = CTRL_fixation_alpha
    version                                 = 1
    autoplay                                = YES
    )
    
stimulus/advstimulus fixationCross2 (
    trigger_width                           = CTRL_fixationWidth_dva
    trigger_watch_x                         = EYE_x2_dva
    trigger_watch_y                         = EYE_y2_dva
    trigger_flag                            = IO_fixation2_flag
    x_size                                  = CTRL_fixation_size
    y_size                                  = CTRL_fixation_size
    x_position                              = RDP_x
    y_position                              = RDP_y
    shape                                   = format("cross")
    color                                   = COL_fix2_r,COL_fix2_g,COL_fix2_b
    rotation                                = 0
    alpha_multiplier                        = CTRL_fixation2_alpha
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus cursor (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = 0
    x_size                                  = CTRL_cursor_radius * 2
    y_size                                  = CTRL_cursor_radius * 2
    x_position                              = IO_cursor_x
    y_position                              = IO_cursor_y
    shape                                   = format("circle")
    color                                   = COL_cursor_r,COL_cursor_g,COL_cursor_b
    rotation                                = 0
    alpha_multiplier                        = 1
    version                                 = 1
    autoplay                                = YES
    )

stimulus/r_d_p RDP (
    radius                      			= RDP_radius
    x_position                  			= RDP_x
    y_position                  			= RDP_y
    dot_density                 			= RDP_density // dots/dva
    dot_size                    			= RDP_dotsize // dva
    color                       			= COL_rdp_r,COL_rdp_g,COL_rdp_b
    alpha_multiplier            			= RDP_alpha
    direction                   			= RDP_direction
    speed                       			= RDP_speed // dva/s
    coherence                   			= RDP_coherence
    lifetime                    			= RDP_lifetime
    announce_dots               			= YES // YES for dot position
    autoplay                    			= YES
    )

stimulus/advstimulus start_area (
    trigger_width               			= CTRL_start_area_size
    trigger_watch_x             			= IO_cursor_x   
    trigger_watch_y             			= IO_cursor_y   
    trigger_flag                			= CTRL_start_area_flag
    x_size                      			= CTRL_start_area_size
    y_size                      			= CTRL_start_area_size
    x_position                  			= RDP_x
    y_position                  			= RDP_y
    shape                       			= format("circle")
    color                       			= COL_start_area_r,COL_start_area_g,COL_start_area_b
    rotation                    			= 0
    alpha_multiplier            			= CTRL_start_area_alpha
    version                     			= 1
    autoplay                    			= YES
    )

stimulus/advstimulus arc (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = CTRL_arc_flag
    x_size                                  = CTRL_arc_size
    y_size                                  = CTRL_arc_size
    x_position                              = RDP_x
    y_position                              = RDP_y
    shape                                   = format("circle %d", (integer)IO_arc_width)    
    color                                   = COL_arc_r,COL_arc_g,COL_arc_b
    rotation                                = -IO_joystickDirection + (IO_arc_width/2)
    alpha_multiplier                        = CTRL_arc_alpha
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus arcMask (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = 0
    x_size                                  = CTRL_arcMask_size
    y_size                                  = CTRL_arcMask_size
    x_position                              = RDP_x
    y_position                              = RDP_y
    shape                                   = format("circle %d", (integer)360)    
    color                                   = COL_start_area_r,COL_start_area_g,COL_start_area_b
    rotation                                = 1
    alpha_multiplier                        = 1
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus arc2 (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = CTRL_arc2_flag
    x_size                                  = CTRL_arc2_size
    y_size                                  = CTRL_arc2_size
    x_position                              = -RDP_x
    y_position                              = RDP_y
    shape                                   = format("circle %d", (integer)IO_arc2_width)    
    color                                   = COL_arc2_r,COL_arc2_g,COL_arc2_b
    rotation                                = -IO_joystickDirection2 + (IO_arc2_width/2)
    alpha_multiplier                        = CTRL_arc2_alpha
    version                                 = 1
    autoplay                                = YES
    )


stimulus/advstimulus arcMask2 (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = 0
    x_size                                  = CTRL_arcMask2_size 
    y_size                                  = CTRL_arcMask2_size
    x_position                              = -RDP_x
    y_position                              = RDP_y
    shape                                   = format("circle %d", (integer)360)    
    color                                   = COL_start_area_r,COL_start_area_g,COL_start_area_b
    rotation                                = 0
    alpha_multiplier                        = 1
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus indicator (
    trigger_width               			= 0
    trigger_watch_x             			= 0
    trigger_watch_y             			= 0
    trigger_flag                			= 0
    x_size                      			= CTRL_indicator_size
    y_size                      			= CTRL_indicator_size
    x_position                  			= (sin((IO_joystickDirection)*(pi/180)) * CTRL_indicator_offset) + RDP_x
    y_position                  			= (cos((IO_joystickDirection)*(pi/180)) * CTRL_indicator_offset) + RDP_y
    shape                       			= format("symmetric 3")
    color                       			= COL_arc_r,COL_arc_g,COL_arc_b
    rotation                    			= -IO_joystickDirection
    alpha_multiplier            			= CTRL_indicator_alpha
    version                     			= 1
    autoplay                    			= YES
    )

stimulus/advstimulus indicator2 (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = 0
    x_size                                  = CTRL_indicator_size
    y_size                                  = CTRL_indicator_size
    x_position                              = (sin((IO_joystickDirection2)*(pi/180)) * CTRL_indicator2_offset) - RDP_x
    y_position                              = (cos((IO_joystickDirection2)*(pi/180)) * CTRL_indicator2_offset) + RDP_y
    shape                                   = format("symmetric 3")
    color                                   = COL_arc2_r,COL_arc2_g,COL_arc2_b
    rotation                                = -IO_joystickDirection2
    alpha_multiplier                        = CTRL_indicator2_alpha
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus target (
    trigger_width               			= CTRL_target_size
    trigger_watch_x                         = IO_cursor_x
    trigger_watch_y                         = IO_cursor_y
    trigger_flag                			= CTRL_target_flag
    x_size                      			= CTRL_target_size
    y_size                      			= CTRL_target_size
    x_position                  			= CTRL_target_x
    y_position                  			= CTRL_target_y
    shape                       			= format("circle")
    color                       			= COL_target_r,COL_target_g,COL_target_b
    rotation                    			= 0
    alpha_multiplier            			= CTRL_target_alpha
    version                     			= 1
    autoplay                    			= YES
    )

stimulus/advstimulus target2 (
    trigger_width                           = CTRL_target_size
    trigger_watch_x                         = IO_cursor_x
    trigger_watch_y                         = IO_cursor_y
    trigger_flag                            = CTRL_target2_flag
    x_size                                  = CTRL_target_size
    y_size                                  = CTRL_target_size
    x_position                              = CTRL_target2_x
    y_position                              = CTRL_target2_y
    shape                                   = format("circle")
    color                                   = COL_target_r,COL_target_g,COL_target_b
    rotation                                = 0
    alpha_multiplier                        = CTRL_target_alpha
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus target3 (
    trigger_width                           = CTRL_target_size
    trigger_watch_x                         = IO_cursor_x
    trigger_watch_y                         = IO_cursor_y
    trigger_flag                            = CTRL_target3_flag
    x_size                                  = CTRL_target_size
    y_size                                  = CTRL_target_size
    x_position                              = CTRL_target3_x
    y_position                              = CTRL_target3_y
    shape                                   = format("circle")
    color                                   = COL_target_r,COL_target_g,COL_target_b
    rotation                                = 0
    alpha_multiplier                        = CTRL_target_alpha
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus target4 (
    trigger_width                           = CTRL_target_size
    trigger_watch_x                         = IO_cursor_x
    trigger_watch_y                         = IO_cursor_y
    trigger_flag                            = CTRL_target4_flag
    x_size                                  = CTRL_target_size
    y_size                                  = CTRL_target_size
    x_position                              = CTRL_target4_x
    y_position                              = CTRL_target4_y
    shape                                   = format("circle")
    color                                   = COL_target_r,COL_target_g,COL_target_b
    rotation                                = 0
    alpha_multiplier                        = CTRL_target_alpha
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus feedback (
    trigger_width               			= 0
    trigger_watch_x             			= 0
    trigger_watch_y             			= 0
    trigger_flag                			= 0
    x_size                      			= TMP_score*2
    y_size                      			= TMP_score*2
    x_position                  			= RDP_x
    y_position                  			= RDP_y
    shape                       			= format("circle %d", (integer)360)
    color                       			= COL_feedback_r,COL_feedback_g,COL_feedback_b
    rotation                    			= 0
    alpha_multiplier            			= CTRL_feedback_alpha
    version                     			= 1
    autoplay                    			= YES
    )

stimulus/advstimulus feedback1 (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = 0
    x_size                                  = TMP_score*2
    y_size                                  = TMP_score*2
    x_position                              = RDP_x
    y_position                              = RDP_y
    shape                                   = format("circle %d", (integer)180)
    color                                   = COL_feedback_r,COL_feedback_g,COL_feedback_b
    rotation                                = 0
    alpha_multiplier                        = CTRL_feedback_alpha
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus feedback2 (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = 0
    x_size                                  = TMP_score2*2
    y_size                                  = TMP_score2*2
    x_position                              = RDP_x
    y_position                              = RDP_y
    shape                                   = format("circle %d", (integer)180)
    color                                   = COL_feedback2_r,COL_feedback2_g,COL_feedback2_b
    rotation                                = 180
    alpha_multiplier                        = CTRL_feedback_alpha
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus scoreBar (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = 0
    x_size                                  = CTRL_scoreBar_size
    y_size                                  = CTRL_scoreBar_size
    x_position                              = RDP_x
    y_position                              = RDP_y
    shape                                   = format("circle %d", (integer)CTRL_scoreBar_width)    
    color                                   = COL_scoreBar_r,COL_scoreBar_g,COL_scoreBar_b
    rotation                                = CTRL_feedback_rotation
    alpha_multiplier                        = CTRL_scoreBar_alpha
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus scoreBarBackground (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = 0
    x_size                                  = CTRL_scoreBar_size
    y_size                                  = CTRL_scoreBar_size
    x_position                              = RDP_x
    y_position                              = RDP_y
    shape                                   = format("circle %d", (integer)360)    
    color                                   = COL_scoreBar_r,COL_scoreBar_g,COL_scoreBar_b
    rotation                                = 0
    alpha_multiplier                        = CTRL_scoreBarBackground_alpha
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus scoreBarMask (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = 0
    x_size                                  = CTRL_scoreBar_size - CTRL_barwidth
    y_size                                  = CTRL_scoreBar_size - CTRL_barwidth
    x_position                              = RDP_x
    y_position                              = RDP_y
    shape                                   = format("circle %d", (integer)360)    
    color                                   = 0,0,0
    rotation                                = 0
    alpha_multiplier                        = 1
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus scoreBar2 (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = 0
    x_size                                  = CTRL_scoreBar2_size
    y_size                                  = CTRL_scoreBar2_size
    x_position                              = RDP_x
    y_position                              = RDP_y
    shape                                   = format("circle %d", (integer)CTRL_scoreBar2_width)    
    color                                   = COL_scoreBar2_r,COL_scoreBar2_g,COL_scoreBar2_b
    rotation                                = CTRL_feedback_rotation
    alpha_multiplier                        = CTRL_scoreBar2_alpha
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus scoreBarBackground2 (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = 0
    x_size                                  = CTRL_scoreBar2_size
    y_size                                  = CTRL_scoreBar2_size
    x_position                              = RDP_x
    y_position                              = RDP_y
    shape                                   = format("circle %d", (integer)360)    
    color                                   = COL_scoreBar2_r,COL_scoreBar2_g,COL_scoreBar2_b
    rotation                                = 0
    alpha_multiplier                        = CTRL_scoreBarBackground2_alpha
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus scoreBarMask2 (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = 0
    x_size                                  = CTRL_scoreBar2_size - CTRL_barwidth
    y_size                                  = CTRL_scoreBar2_size - CTRL_barwidth
    x_position                              = RDP_x
    y_position                              = RDP_y
    shape                                   = format("circle %d", (integer)360)    
    color                                   = 0,0,0
    rotation                                = 0
    alpha_multiplier                        = 1
    version                                 = 1
    autoplay                                = YES
    )

stimulus/rectangle cum_rew_bar_frame (
    x_size                                  = (CTRL_feedback_bar_width*CTRL_feedback_nBar) + (CTRL_feedback_frame_width*CTRL_feedback_nBar)
    y_size                                  = CTRL_feedback_frame_height + CTRL_feedback_frame_width
    x_position                              = 0
    y_position                              = 0
    color                                   = 1,1,1
    rotation                                = 0
    alpha_multiplier                        = 1
    )

stimulus/rectangle cum_rew_bar_surface(
    x_size                                  = CTRL_feedback_bar_width*CTRL_feedback_nBar
    y_size                                  = CTRL_feedback_frame_height
    x_position                              = 0
    y_position                              = 0
    color                                   = 0,0,0
    rotation                                = 0
    alpha_multiplier                        = 1
    )

stimulus/rectangle cum_target_counter_solo(
    x_size                                  = CTRL_feedback_bar_width
    y_size                                  = CTRL_feedback_target_bar_height
    x_position                              = CTRL_feedback_offset_x
    y_position                              = (CTRL_feedback_target_bar_height/2) - (CTRL_feedback_frame_height/2)
    color                                   = COL_targetBar_r,COL_targetBar_g,COL_targetBar_b
    rotation                                = 0
    alpha_multiplier                        = 1
    )

stimulus/rectangle cum_rew_bar_solo (
    x_size                                  = CTRL_feedback_bar_width
    y_size                                  = CTRL_feedback_bar_height
    x_position                              = -CTRL_feedback_offset_x
    y_position                              = (CTRL_feedback_bar_height/2) - (CTRL_feedback_frame_height/2)
    color                                   = COL_feedback_r,COL_feedback_g,COL_feedback_b
    rotation                                = 0
    alpha_multiplier                        = 1
    )

stimulus/rectangle cum_target_counter(
    x_size                                  = CTRL_feedback_bar_width
    y_size                                  = CTRL_feedback_target_bar_height
    x_position                              = 0
    y_position                              = (CTRL_feedback_target_bar_height/2) - (CTRL_feedback_frame_height/2)
    color                                   = COL_targetBar_r,COL_targetBar_g,COL_targetBar_b
    rotation                                = 0
    alpha_multiplier                        = 1
    )

stimulus/rectangle cum_rew_bar (
    x_size                                  = CTRL_feedback_bar_width
    y_size                                  = CTRL_feedback_bar_height
    x_position                              = -CTRL_feedback_offset_x
    y_position                              = (CTRL_feedback_bar_height/2) - (CTRL_feedback_frame_height/2)
    color                                   = COL_feedback_r,COL_feedback_g,COL_feedback_b
    rotation                                = 0
    alpha_multiplier                        = 1
    )

stimulus/rectangle cum_rew_bar2 (
    x_size                                  = CTRL_feedback_bar_width
    y_size                                  = CTRL_feedback2_bar_height
    x_position                              = CTRL_feedback_offset_x
    y_position                              = (CTRL_feedback2_bar_height/2) - (CTRL_feedback_frame_height/2)
    color                                   = COL_feedback2_r,COL_feedback2_g,COL_feedback2_b
    rotation                                = 0
    alpha_multiplier                        = 1
    )


//
// Protocols
//


protocol 'CPR_solo' {
    report ('Hello! Starting Experiment...')
    start_device_io (joystick)
    live_queue_stimulus (Background)
    update_stimulus_display ()

    // Set desired parameters
    ML_sync                                     = 1
    CTRL_NoTargets                              = 600
    CTRL_NoStates                               = 30
    CTRL_NoCoherenceStates                      = 10
    CTRL_state_min_ms                           = 1250 
    CTRL_state_max_ms                           = 2500
    CTRL_cpr_treshold                           = .2
    CTRL_arc_alpha                              = 1
    CTRL_arc_size                               = 4
    CTRL_arcMask_size                           = CTRL_arc_size - (CTRL_arc_size/7)
    CTRL_indicator_offset                       = CTRL_arc_size/1.95    
    CTRL_indicator_size                         = 1.3
    CTRL_indicator_alpha                        = 1
    CTRL_start_area_size                        = 4 
    CTRL_start_area_alpha                       = 1
    CTRL_target_size                            = 1
    CTRL_target_offset                          = 2.5
    CTRL_target_deg                             = 2 * (asin( (CTRL_target_size/2) / ((CTRL_start_area_size/2) + (CTRL_target_size/2)) ) * (180/pi))
    CTRL_target_duration_ms                 	= 50
    CTRL_target_ITI_ms                          = 500
    CTRL_target_ban_duration_ms                 = 1
	CTRL_target_alpha                   		= 1
    CTRL_fixationWidth_dva                      = CTRL_start_area_size+2
    CTRL_feedback_alpha                         = 1 
    CTRL_feedback_ms                            = 150
    CTRL_ITI_ms                                 = 2000
    CTRL_scoreBar_width                         = 0
    CTRL_show_agent                             = false
    CTRL_feedback_bar_width                     = 2
    CTRL_feedback_offset_x                      = 1
    CTRL_feedback_frame_width                   = .2
    CTRL_feedback_frame_height                  = 10
    CTRL_feedback_bar_height                    = 0
    CTRL_feedback_nBar                          = 2
    
    COL_player1_r                               = .6275 // Player1 - purple: RGB [0.6275 0.1255 0.9412]
    COL_player1_g                               = .1255
    COL_player1_b                               = .9412
    COL_arc_r                                   = COL_player1_r
    COL_arc_g                                   = COL_player1_g
    COL_arc_b                                   = COL_player1_b
    COL_feedback_r                              = COL_player1_r
    COL_feedback_g                              = COL_player1_g
    COL_feedback_b                              = COL_player1_b
    COL_scoreBar_r                              = COL_player1_r
    COL_scoreBar_g                              = COL_player1_g
    COL_scoreBar_b                              = COL_player1_b

    // Reset counters
    TRIAL_start                                 = 0
    TRIAL_end                                   = 0
    INFO_StateCounter                           = 0
    INFO_CoherenceStateCounter                  = 0
    INFO_TargetCounter                          = 0
    INFO_TrialTargetCounter                     = 0
    INFO_HitCounter                             = 0
    INFO_ErrorCounter                           = 0
    INFO_Score                                  = 0
    INFO_TrialScore                             = 0

    // Set TMP variables for online processing
    TMP_NoStates                                = CTRL_NoStates
    TMP_NoCoherenceStates                       = CTRL_NoCoherenceStates
    TMP_state_min_ms                            = CTRL_state_min_ms
    TMP_state_max_ms                            = CTRL_state_max_ms
    TMP_snr_list                                = CTRL_snr_list
    TMP_directionChange_list                    = CTRL_directionChange_list
    TMP_target_ITI_ms                           = CTRL_target_ITI_ms
    TMP_target_ban_duration_ms                  = CTRL_target_ban_duration_ms
    TMP_show_agent                              = CTRL_show_agent
    ML_sync                                     = 0

    // Initialise timer
    start_timer (
        timer                                   = TargetDurationTimer
        duration                                = 1
        duration_units                          = ms
    )

    start_timer (
        timer                                   = Target_ITI_Timer
        duration                                = 1
        duration_units                          = ms
    )

    start_timer (
        timer                                   = FeedbackTimer
        duration                                = 1
        duration_units                          = ms
    )


    cancelTrigger                               = false
    schedule (
        delay                                   = 0 
        duration                                = 10000
        repeats                                 = -999
        cancel                                  = cancelTrigger
        ) {
            IO_joystickTrigger                  = true
    }

    trial 'Trial Structure' {
        task LOOP {

            state 'Wait for Joystick Reset' {
                goto (
                    target                      = 'Wait for Joystick Movement'
                    when                        = (IO_joystickStrength <= CTRL_cpr_treshold) 
                    )
            }
            
            state 'Wait for Joystick Movement' {
                live_queue_stimulus (start_area)
                dequeue_stimulus (cum_rew_bar_frame)
                dequeue_stimulus (cum_rew_bar_surface)
                dequeue_stimulus (cum_rew_bar_solo)
                dequeue_stimulus (cum_target_counter_solo)
                update_stimulus_display ()

            	COL_start_area_r 				= 1
				COL_start_area_g 				= 1
				COL_start_area_b 				= 1
				
                goto (
                    target                      = 'New Trial'
                    when                        = (IO_joystickStrength > CTRL_cpr_treshold) 
                    )
            }

            state 'New Trial' { 
                ML_sync                         = 1 // Matlab sync event
                TRIAL_start                    += 1 // Count trial number
                TRIAL_align                     = 1 // Trial align event
                INFO_task                       = "CPR_solo_stepfunction_neutral"
                TMP_sample_counter              = 0 // Reset variables
                INFO_StateCounter               = 0 
                INFO_CoherenceStateCounter      = 0  
                INFO_TrialTargetCounter         = 0
                INFO_TrialScore                 = 0
                CTRL_scoreBar_width             = 0
                COL_start_area_r                = 0 
                COL_start_area_g                = 0
                COL_start_area_b                = 0
                CTRL_feedback_rotation          = disc_rand(0,359)

                if (TRIAL_start == 1) {
                    RDP_coherence               = .99 // Stimulus coherence of state
                }

                if (TRIAL_start > 1) {
                    RDP_coherence               = RDP_coherence - .1 // Stimulus coherence of state
                }

                if (RDP_coherence <= .1) {
                    RDP_coherence               = .1 // Stimulus coherence of state
                }
                
                // Set TMP variables for online processing
                TMP_NoStates                    = CTRL_NoStates
                TMP_NoCoherenceStates           = CTRL_NoCoherenceStates
                TMP_state_min_ms                = CTRL_state_min_ms
                TMP_state_max_ms                = CTRL_state_max_ms
                TMP_snr_list                    = CTRL_snr_list
                TMP_directionChange_list        = CTRL_directionChange_list
                TMP_target_ITI_ms               = CTRL_target_ITI_ms
                TMP_target_ban_duration_ms      = CTRL_target_ban_duration_ms
                TMP_show_agent                  = CTRL_show_agent
                ML_sync                         = 0 // Stop sync

                report ('===== TRIAL $TRIAL_start STARTS =====')
                goto ('Show Stimuli')
            }

            state 'Show Stimuli' {
                //live_queue_stimulus (scoreBarBackground)
                //live_queue_stimulus (scoreBar)
                //live_queue_stimulus (scoreBarMask)
                live_queue_stimulus (RDP)
                live_queue_stimulus (start_area)
                live_queue_stimulus (arc)
                live_queue_stimulus (arcMask)
                live_queue_stimulus (indicator)
                live_queue_stimulus (fixationCross)
                update_stimulus_display ()

                goto ('Dequeue Target')
            }

            state 'Dequeue Target' {
                //Remove target from screen
                dequeue_stimulus (target)
                update_stimulus_display ()
                
                // Reset flag
                TRIAL_reactionTrigger           = 0
                CTRL_hit_flag                   = 0
                CTRL_miss_flag                  = 0

                goto ('Check Counters')
            }

            state 'Dequeue Feedback' {
                //Remove feedback from screen
                dequeue_stimulus (feedback)
                update_stimulus_display ()

                // Reset flag
                CTRL_feedback_flag              = 0

                goto ('Check Counters')
            }

            state 'Check Counters' {
                goto (
                    target                      = 'End Trial'
                    when                        = ((INFO_StateCounter >= CTRL_NoStates) && timer_expired(StateDurationTimer)) || (INFO_TargetCounter >= CTRL_NoTargets)
                    )
                goto (
                    target                      = 'Update Stimuli'
                    when                        =  timer_expired(StateDurationTimer) == 0
                    )
                goto (
                    target                      = 'Set up state'
                    when                        =  timer_expired(StateDurationTimer) 
                    )
            }

            state 'Set up state' {
                // Determine state parameters
                CTRL_state_duration_ms          = disc_rand(1500,2500) // Duration of state
                RDP_direction                   = disc_rand(0,359)  // Stimulus direction of state
                INFO_StateCounter               += 1
                
                // Keep track of number of states with same coherence level
                if (INFO_CoherenceStateCounter >= CTRL_NoCoherenceStates) {
                    INFO_CoherenceStateCounter  = 0
                }
                INFO_CoherenceStateCounter      = INFO_CoherenceStateCounter + 1
                TRIAL_type                      = format("Coh%d", (float)RDP_coherence)

                start_timer (
                    timer                       = StateDurationTimer
                    duration                    = CTRL_state_duration_ms
                    duration_units              = ms
                    )

                // Block target appearance in time window after state onset
                start_timer (
                    timer                       = TargetBanTimer
                    duration                    = CTRL_target_ban_duration_ms
                    duration_units              = ms
                    )

                report ('--- State $INFO_StateCounter ---')
                goto ('Update Stimuli')
            }


			state 'Update Stimuli' { 
                goto (                    
                    target                      = 'Fixation break detected'
                    when                        = (IO_fixation_flag == 0 && CTRL_fixation_break_flag == 0) 
                    )
                goto (                    
                    target                      = 'Reset CTRL_fixation_break_flag'
                    when                        = (IO_fixation_flag && CTRL_fixation_break_flag && timer_expired(MinFixationBreakTimer) == 0) 
                    )                
                goto (                    
                    target                      = 'Fixation break penalty'
                    when                        = (IO_fixation_flag == 0 && timer_expired(MinFixationBreakTimer) && CTRL_fixation_break_flag && CTRL_fixation_penalty_flag == 0)
                    )
                goto (                    
                    target                      = 'Fixation restored'
                    when                        = (IO_fixation_flag && timer_expired(FixBreakPenaltyTimer) && CTRL_fixation_break_flag) 
                    )
                goto (
                    target                      = 'Dequeue Target'
                    when                        = CTRL_hit_flag && TRIAL_reactionTrigger && timer_expired(TargetDurationTimer)
                    )
                goto (
                    target                      = 'Dequeue Feedback'
                    when                        = CTRL_feedback_flag && timer_expired(TargetDurationTimer) && timer_expired(FeedbackTimer) 
                    )
                goto (
                    target                      = 'Target presentation'
                    when                        = CTRL_target_idx == 0 && TRIAL_reactionTrigger == 0 && timer_expired(Target_ITI_Timer) && timer_expired(TargetBanTimer)
                    ) 
                goto (
                    target                      = 'Hit'
                    when                        = CTRL_arc_flag && TRIAL_reactionTrigger && (CTRL_hit_flag + CTRL_miss_flag) == 0 && timer_expired(TargetDurationTimer) == 0 && CTRL_fixation_penalty_flag == 0
                    )  
                goto (
                    target                      = 'Miss'
                    when                        = timer_expired(TargetDurationTimer) && TRIAL_reactionTrigger && (CTRL_hit_flag + CTRL_miss_flag) == 0
                    )              
                goto (
                    target                      = 'Check Counters'
                    when                        = timer_expired(StateDurationTimer) && TRIAL_reactionTrigger == 0
                    )
            }
           
            state 'Fixation break detected' {
                CTRL_fixation_break_flag        = 1

                start_timer (
                    timer                       = MinFixationBreakTimer
                    duration                    = CTRL_minFixBreak_duration_ms
                    duration_units              = ms
                    )
                    
                //report ('FIX BREAK')
                
                goto ('Update Stimuli')
            }

            state 'Reset CTRL_fixation_break_flag' {
                    CTRL_fixation_break_flag        = 0
                    //report ('FIX RESET')
                    goto ('Update Stimuli')
            }

            state 'Fixation break penalty' {
                CTRL_fixation_size              = .75
                COL_fix_r                       = 1
                COL_fix_b                       = 0
                COL_fix_g                       = 0
                CTRL_arc_alpha                  = 0
                CTRL_indicator_alpha            = 0
                CTRL_fixation_penalty_flag 		= 1

                start_timer (
                    timer                       = FixBreakPenaltyTimer
                    duration                    = CTRL_fixBreak_penalty_duration_ms
                    duration_units              = ms
                    )
                
                report ('FIX PENALTY')
                
                goto ('Update Stimuli')
            }

            state 'Fixation restored' {
                CTRL_fixation_size              = .3
                COL_fix_r                       = 1
                COL_fix_b                       = 1
                COL_fix_g                       = 1
                CTRL_arc_alpha                  = 1
                CTRL_indicator_alpha            = 1
                CTRL_fixation_break_flag        = 0
                CTRL_fixation_penalty_flag 		= 0

                report ('FIX RESTORED')

                goto ('Update Stimuli')
            }

       		state 'Target presentation' {
                // Target coordinates according to RDP direction
                CTRL_target_x                   = (sin((RDP_direction)*(pi/180)) * (CTRL_target_offset)) + RDP_x
                CTRL_target_y                   = (cos((RDP_direction)*(pi/180)) * (CTRL_target_offset)) + RDP_x

                live_queue_stimulus (target)
                update_stimulus_display ()

                TRIAL_reactionTrigger           = 1
                INFO_TargetCounter              += 1
                INFO_TrialTargetCounter         += 1

                start_timer (
                    timer                       = TargetDurationTimer
                    duration                    = CTRL_target_duration_ms
                    duration_units              = ms
                    )

                // Block target appearance
                start_timer (
                    timer                       = Target_ITI_Timer
                    duration                    = (CTRL_target_duration_ms + CTRL_target_ITI_ms)
                    duration_units              = ms
                    )

                report ('--- SHOW TARGET $INFO_TargetCounter ---')
                goto ('Update Stimuli')
            }

            state 'Hit' {
            	// Set flags and add to counters
                TRIAL_outcome                   = "hit"
                CTRL_hit_flag                   = 1
                CTRL_feedback_flag              = 1
                INFO_HitCounter                 += 1
                INFO_Score                      += TMP_score
                INFO_TrialScore                 += TMP_score
                CTRL_scoreBar_width             = 360 * (INFO_TrialScore/INFO_TrialTargetCounter)

                // PRESENT BOTH SPEAKERS - SETUP INDEPENDENT
                if (TMP_score > .875) {
                    play_sound (Reward8R_sound)
                    play_sound (Reward8L_sound)
                }

                if (TMP_score > .75 && TMP_score <= .875) {
                    play_sound (Reward7R_sound)
                    play_sound (Reward7L_sound)
                }

                if (TMP_score > .625 && TMP_score <= .75) {
                    play_sound (Reward6R_sound)
                    play_sound (Reward6L_sound)
                }

                if (TMP_score > .5 && TMP_score <= .625) {
                    play_sound (Reward5R_sound)
                    play_sound (Reward5L_sound)
                }

                if (TMP_score > .375 && TMP_score <= .5) {
                    play_sound (Reward4R_sound)
                    play_sound (Reward4L_sound)
                }

                if (TMP_score > .25 && TMP_score <= .375) {
                    play_sound (Reward3R_sound)
                    play_sound (Reward3L_sound)
                }

                if (TMP_score > .125 && TMP_score <= .25) {
                    play_sound (Reward2R_sound)
                    play_sound (Reward2L_sound)
                }

                if (TMP_score <= .125) {
                    play_sound (Reward1R_sound)
                    play_sound (Reward1L_sound)
                }

				// Visual feedback
				live_queue_stimulus (feedback)
				live_queue_stimulus (fixationCross)
                update_stimulus_display ()

                report ('--- OUTCOME: Hit ---')
                report ('Score: $TMP_score')

                start_timer (
                    timer                       = FeedbackTimer
                    duration                    = CTRL_feedback_ms
                    duration_units              = ms
                    )

                goto ('Update Stimuli')
            }
    
            state 'Miss' {
                //play_sound (Failure_sound)

                // Set flags
                TRIAL_outcome                   = "miss"
                CTRL_miss_flag                  = 1
                INFO_ErrorCounter               += 1
                CTRL_scoreBar_width             = 360 * (INFO_TrialScore/INFO_TrialTargetCounter)

                report ('--- OUTCOME: Miss ---')

                goto (
                    target                      = 'End Trial'
                    when                        = ((INFO_StateCounter >= CTRL_NoStates) && timer_expired(StateDurationTimer)) || (INFO_TargetCounter >= CTRL_NoTargets)
                    )
                goto ('Dequeue Target')
            }  

            state 'End Trial' {
                //dequeue_stimulus (scoreBarBackground)
                //dequeue_stimulus (scoreBar)
                //dequeue_stimulus (scoreBarMask)
                dequeue_stimulus (RDP)
                dequeue_stimulus (start_area)
                dequeue_stimulus (arc)
                dequeue_stimulus (arcMask)
                dequeue_stimulus (indicator)
                dequeue_stimulus (fixationCross)
                dequeue_stimulus (target)
                dequeue_stimulus (feedback)


                TRIAL_align                     = 0
                TRIAL_end                     	= TRIAL_start

                start_timer (
                    timer                       = ITI_Timer
                    duration                    = CTRL_ITI_ms
                    duration_units              = ms
                    )

                update_stimulus_display ()
                report ('===== TRIAL $TRIAL_end ENDS =====')
                goto (ITI)
            }

            state ITI {
                CTRL_feedback_bar_height                = INFO_Score*(CTRL_feedback_frame_height/CTRL_NoTargets)
                CTRL_feedback_target_bar_height         = INFO_TargetCounter*(CTRL_feedback_frame_height/CTRL_NoTargets)
                
                live_queue_stimulus (cum_rew_bar_frame)
                live_queue_stimulus (cum_rew_bar_surface)
                live_queue_stimulus (cum_rew_bar_solo)
                live_queue_stimulus (cum_target_counter_solo)
                update_stimulus_display ()   
                    
                goto (
                    target                      = 'End paradigm'
                    when                        = INFO_TargetCounter >= CTRL_NoTargets && timer_expired(ITI_Timer)
                    )
                timer_expired (
                    target                      = 'Wait for Joystick Reset'
                    timer                       = ITI_Timer
                    )
            }
            state 'End paradigm' {
                update_stimulus_display ()
                report ('==== SUMMARY: $INFO_HitCounter / $INFO_TargetCounter COINS COLLECTED ====')
                report ('==== ENDING PARADIGM ====')
                play_sound (End_sound)
                cancelTrigger                   = false
                yield ()
            }
        }
    }
}


protocol 'CPR_dyatic' {
    report ('Hello! Starting Experiment...')
    live_queue_stimulus (Background)
    start_device_io (joystick)
    start_device_io (joystick2)
    update_stimulus_display ()

   // Set desired parameters
    ML_sync                                     = 1
    CTRL_NoTargets                              = 600
    CTRL_NoStates                               = 30
    CTRL_NoCoherenceStates                      = 10 
    CTRL_state_min_ms                           = 1250 
    CTRL_state_max_ms                           = 2500
    CTRL_cpr_treshold                           = .2
    CTRL_arc_alpha                              = 1
    CTRL_arc2_alpha                             = 1
    CTRL_arc_size                               = 4
    CTRL_arc2_size                               = CTRL_arc_size + (CTRL_arc_size/10)
    CTRL_indicator_size                         = 1.3
    CTRL_indicator_offset                       = CTRL_arc_size/1.95
    CTRL_indicator_alpha                        = 1
    CTRL_indicator2_alpha                       = 1
    CTRL_indicator2_offset                      = 4.4 / 1.95
    CTRL_start_area_size                        = 4 
    CTRL_start_area_alpha                       = 1
    CTRL_target_size                            = 1
    CTRL_target_offset                          = 2.5
    CTRL_target_deg                             = 2 * (asin( (CTRL_target_size/2) / ((CTRL_start_area_size/2) + (CTRL_target_size/2)) ) * (180/pi))
    CTRL_target_duration_ms                     = 50
    CTRL_target_ITI_ms                          = 500
    CTRL_target_ban_duration_ms                 = 1
    CTRL_target_alpha                           = 1
    CTRL_fixationWidth_dva                      = CTRL_start_area_size+2
    CTRL_feedback_alpha                         = 1 
    CTRL_feedback_ms                            = 150
    CTRL_ITI_ms                                 = 2000
    CTRL_scoreBar_width                         = 0
    CTRL_show_agent                             = false
    CTRL_feedback_bar_width                     = 2
    CTRL_feedback_offset_x                      = 2
    CTRL_feedback_frame_width                   = .2
    CTRL_feedback_frame_height                  = 10
    CTRL_feedback_bar_height                    = 0
    CTRL_feedback2_bar_height                   = 0
    CTRL_feedback_nBar                          = 3

    COL_player1_r                               = .6275 // Player1 - purple: RGB [0.6275 0.1255 0.9412]
    COL_player1_g                               = .1255
    COL_player1_b                               = .9412
    COL_player2_r                               = 0 //Player2 - green: [0 .4 0]
    COL_player2_g                               = .4
    COL_player2_b                               = 0
    COL_arc_r                                   = COL_player1_r
    COL_arc_g                                   = COL_player1_g
    COL_arc_b                                   = COL_player1_b
    COL_feedback_r                              = COL_player1_r
    COL_feedback_g                              = COL_player1_g
    COL_feedback_b                              = COL_player1_b
    COL_scoreBar_r                              = COL_player1_r
    COL_scoreBar_g                              = COL_player1_g
    COL_scoreBar_b                              = COL_player1_b
    COL_arc2_r                                  = COL_player2_r
    COL_arc2_g                                  = COL_player2_g
    COL_arc2_b                                  = COL_player2_b
    COL_feedback2_r                             = COL_player2_r
    COL_feedback2_g                             = COL_player2_g
    COL_feedback2_b                             = COL_player2_b
    COL_scoreBar2_r                             = COL_player2_r
    COL_scoreBar2_g                             = COL_player2_g
    COL_scoreBar2_b                             = COL_player2_b

    // Reset counters
    TRIAL_start                                 = 0
    TRIAL_end                                   = 0
    INFO_StateCounter                           = 0
    INFO_CoherenceStateCounter                  = 0
    INFO_TargetCounter                          = 0
    INFO_TrialTargetCounter                     = 0
    INFO_HitCounter                             = 0
    INFO_ErrorCounter                           = 0
    INFO_HitCounter2                            = 0
    INFO_ErrorCounter2                          = 0
    INFO_Score                                  = 0
    INFO_Score2                                 = 0
    INFO_TrialScore                             = 0
    INFO_TrialScore2                            = 0

    // Set TMP variables for online processing
    TMP_NoStates                                = CTRL_NoStates
    TMP_NoCoherenceStates                       = CTRL_NoCoherenceStates
    TMP_state_min_ms                            = CTRL_state_min_ms
    TMP_state_max_ms                            = CTRL_state_max_ms
    TMP_snr_list                                = CTRL_snr_list
    TMP_directionChange_list                    = CTRL_directionChange_list
    TMP_target_ITI_ms                           = CTRL_target_ITI_ms
    TMP_target_ban_duration_ms                  = CTRL_target_ban_duration_ms
    ML_sync                                     = 0

    // Initialise timer
    start_timer (
        timer                                   = TargetDurationTimer
        duration                                = 1
        duration_units                          = ms
    )

    start_timer (
        timer                                   = Target_ITI_Timer
        duration                                = 1
        duration_units                          = ms
    )

    start_timer (
        timer                                   = FeedbackTimer
        duration                                = 1
        duration_units                          = ms
    )

    cancelTrigger                               = false
    schedule (
        delay                                   = 0 
        duration                                = 10000
        repeats                                 = -999
        cancel                                  = cancelTrigger
        ) {
            IO_joystickTrigger                  = true
            IO_joystickTrigger2                 = true
    }

    trial 'Trial Structure' {
        task LOOP {

            state 'Wait for Joystick Reset' {
                goto (
                    target                      = 'Wait for Joystick Movement'
                    when                        = (IO_joystickStrength <= CTRL_cpr_treshold) && (IO_joystickStrength2 <= CTRL_cpr_treshold)  
                    )
            }
            
            state 'Wait for Joystick Movement' {
                live_queue_stimulus (start_area)
                dequeue_stimulus (cum_rew_bar_frame)
                dequeue_stimulus (cum_rew_bar_surface)
                dequeue_stimulus (cum_rew_bar)
                dequeue_stimulus (cum_rew_bar2)
                dequeue_stimulus (cum_target_counter)
                update_stimulus_display ()

                COL_start_area_r                = 1
                COL_start_area_g                = 1
                COL_start_area_b                = 1
                
                goto (
                    target                      = 'New Trial'
                    when                        = (IO_joystickStrength > CTRL_cpr_treshold) && (IO_joystickStrength2 > CTRL_cpr_treshold)  
                    )
            }
            
            state 'New Trial' {
                ML_sync                         = 1 // Matlab sync event
                TRIAL_start                    += 1 // Count trial number
                TRIAL_align                     = 1 // Trial align event
                INFO_task                       = "CPR_dyadic_stepfunction_neutral"
                TMP_sample_counter              = 0 // Reset variables
                INFO_StateCounter               = 0 
                INFO_CoherenceStateCounter      = 0         
                INFO_TrialTargetCounter         = 0
                INFO_TrialScore                 = 0
                INFO_TrialScore2                = 0  
                CTRL_scoreBar_width             = 0
                CTRL_scoreBar2_width            = 0      
                COL_start_area_r                = 0 
                COL_start_area_g                = 0
                COL_start_area_b                = 0
                CTRL_feedback_rotation          = disc_rand(0,359)
                CTRL_arc_position               = TRIAL_start % 2

                // Alternate arc trajectory
                if (CTRL_arc_position == 0) {
                    CTRL_arc_size               = 4
                    CTRL_arcMask_size           = CTRL_arc_size - (CTRL_arc_size/10)
                    CTRL_indicator_offset       = CTRL_arc_size/1.95

                    CTRL_arc2_size              = CTRL_arcMask_size
                    CTRL_arcMask2_size          = CTRL_arc2_size - (CTRL_arc_size/10)
                    CTRL_indicator2_offset      = CTRL_arc2_size / 1.95
                }

                if (CTRL_arc_position == 1) {
                    CTRL_arc2_size              = 4
                    CTRL_arcMask2_size          = CTRL_arc2_size - (CTRL_arc2_size/10)
                    CTRL_indicator2_offset      = CTRL_arc2_size/1.95

                    CTRL_arc_size               = CTRL_arcMask2_size
                    CTRL_arcMask_size           = CTRL_arc_size - (CTRL_arc2_size/10)
                    CTRL_indicator_offset       = CTRL_arc_size / 1.95
                }

                if (TRIAL_start == 1) {
                    RDP_coherence               = .99 // Stimulus coherence of state
                }

                if (TRIAL_start > 1) {
                    RDP_coherence               = RDP_coherence - .1 // Stimulus coherence of state
                }

                if (RDP_coherence <= .1) {
                    RDP_coherence               = .1 // Stimulus coherence of state
                }
                     
                // Set TMP variables for online processing
                TMP_NoStates                    = CTRL_NoStates
                TMP_NoCoherenceStates           = CTRL_NoCoherenceStates
                TMP_state_min_ms                = CTRL_state_min_ms
                TMP_state_max_ms                = CTRL_state_max_ms
                TMP_snr_list                    = CTRL_snr_list
                TMP_directionChange_list        = CTRL_directionChange_list
                TMP_target_ITI_ms               = CTRL_target_ITI_ms
                TMP_target_ban_duration_ms      = CTRL_target_ban_duration_ms
                TMP_show_agent                  = CTRL_show_agent
                ML_sync                         = 0 // Stop sync

                report ('===== TRIAL $TRIAL_start STARTS =====')
                goto ('Show Stimuli')
            }

            state 'Show Stimuli' {
                //live_queue_stimulus (scoreBarBackground2)
                //live_queue_stimulus (scoreBar2)
                //live_queue_stimulus (scoreBarMask2)
                //live_queue_stimulus (scoreBarBackground)
                //live_queue_stimulus (scoreBar)
                //live_queue_stimulus (scoreBarMask)
                live_queue_stimulus (RDP)
                live_queue_stimulus (start_area)

                if (CTRL_arc_position == 1) {
                    live_queue_stimulus (arc2)
                    live_queue_stimulus (indicator2)
                    live_queue_stimulus (arcMask2)
                    live_queue_stimulus (arc)
                    live_queue_stimulus (arcMask)
                    live_queue_stimulus (indicator)
                }

                if (CTRL_arc_position == 0) {
                    live_queue_stimulus (arc)
                    live_queue_stimulus (arcMask)
                    live_queue_stimulus (indicator)
                    live_queue_stimulus (arc2)
                    live_queue_stimulus (arcMask2)
                    live_queue_stimulus (indicator2)
                }

                live_queue_stimulus (fixationCross)
                live_queue_stimulus (fixationCross2)
                update_stimulus_display () 

                goto ('Dequeue Target')
            }

            state 'Dequeue Target' {
                //Remove target from screen
                dequeue_stimulus (target)
                update_stimulus_display ()
                
                // Reset flag
                TRIAL_reactionTrigger           = 0
                CTRL_hit_flag                   = 0
                CTRL_hit_flag2                  = 0
                CTRL_miss_flag                  = 0
                CTRL_miss_flag2                 = 0

                goto ('Check Counters')
            }

            state 'Dequeue Feedback' {
                //Remove feedback from screen
                dequeue_stimulus (feedback1)
                dequeue_stimulus (feedback2)
                update_stimulus_display ()

                // Reset flag
                CTRL_feedback_flag              = 0

                goto ('Check Counters')
            }

            state 'Check Counters' {
                goto (
                    target                      = 'End Trial'
                    when                        = ((INFO_StateCounter >= CTRL_NoStates) && timer_expired(StateDurationTimer)) || (INFO_TargetCounter >= CTRL_NoTargets)
                    )
                goto (
                    target                      = 'Update Stimuli'
                    when                        =  timer_expired(StateDurationTimer) == 0
                    )
                goto (
                    target                      = 'Set up state'
                    when                        =  timer_expired(StateDurationTimer) 
                    )
            }

            state 'Set up state' {
                // Determine state parameters
                CTRL_state_duration_ms          = disc_rand(1500,2500) // Duration of state
                RDP_direction                   = disc_rand(0,359)  // Stimulus direction of state           
                INFO_StateCounter               += 1
                
                // Keep track of number of states with same coherence level
                if (INFO_CoherenceStateCounter >= CTRL_NoCoherenceStates) {
                    INFO_CoherenceStateCounter  = 0
                }
                INFO_CoherenceStateCounter      = INFO_CoherenceStateCounter + 1
                TRIAL_type                      = format("Coh%d", (float)RDP_coherence)

                start_timer (
                    timer                       = StateDurationTimer
                    duration                    = CTRL_state_duration_ms
                    duration_units              = ms
                    )

                // Block target appearance in time window after state onset
                start_timer (
                    timer                       = TargetBanTimer
                    duration                    = CTRL_target_ban_duration_ms
                    duration_units              = ms
                    )

                report ('--- State $INFO_StateCounter ---')
                goto ('Update Stimuli')
            }

            state 'Update Stimuli' {
                goto (                    
                    target                      = 'Fixation break detected'
                    when                        = (IO_fixation_flag == 0 && CTRL_fixation_break_flag == 0) || (IO_fixation2_flag == 0 && CTRL_fixation2_break_flag == 0)
                    )
                goto (                    
                    target                      = 'Reset CTRL_fixation_break_flag'
                    when                        = (IO_fixation_flag && CTRL_fixation_break_flag && timer_expired(MinFixationBreakTimer)==0) || (IO_fixation2_flag && CTRL_fixation2_break_flag && timer_expired(MinFixationBreakTimer2)==0)
                    )                
                goto (                    
                    target                      = 'Fixation break penalty'
                    when                        = (IO_fixation_flag == 0 && timer_expired(MinFixationBreakTimer) && CTRL_fixation_break_flag && CTRL_fixation_penalty_flag==0) || (IO_fixation2_flag == 0 && timer_expired(MinFixationBreakTimer2) && CTRL_fixation2_break_flag && CTRL_fixation2_penalty_flag==0)
                    )
                goto (                    
                    target                      = 'Fixation restored'
                    when                        = (IO_fixation_flag && timer_expired(FixBreakPenaltyTimer) && CTRL_fixation_break_flag) || (IO_fixation2_flag && timer_expired(FixBreakPenaltyTimer2) && CTRL_fixation2_break_flag)
                    )
                goto (
                    target                      = 'Dequeue Target'
                    when                        = (CTRL_hit_flag + CTRL_hit_flag2) > 0 && TRIAL_reactionTrigger && timer_expired(TargetDurationTimer)
                    )
                goto (
                    target                      = 'Dequeue Feedback'
                    when                        = CTRL_feedback_flag && timer_expired(TargetDurationTimer) && timer_expired(FeedbackTimer) 
                    )
                goto (
                    target                      = 'Target presentation'
                    when                        = CTRL_target_idx == 0 && TRIAL_reactionTrigger == 0 && timer_expired(Target_ITI_Timer) && timer_expired(TargetBanTimer)
                    ) 
                goto (
                    target                      = 'Single Hit A'
                    when                        = (CTRL_arc_flag && CTRL_fixation_penalty_flag == 0) && (CTRL_arc2_flag == 0 || CTRL_fixation2_penalty_flag == 1) && TRIAL_reactionTrigger && (CTRL_hit_flag + CTRL_hit_flag2 + CTRL_miss_flag + CTRL_miss_flag2) == 0 && timer_expired(TargetDurationTimer) == 0 
                    ) 
                goto (
                    target                      = 'Single Hit B'
                    when                        = (CTRL_arc_flag == 0 || CTRL_fixation_penalty_flag == 1) && (CTRL_arc2_flag && CTRL_fixation2_penalty_flag == 0) && TRIAL_reactionTrigger && (CTRL_hit_flag + CTRL_hit_flag2 + CTRL_miss_flag + CTRL_miss_flag2) == 0 && timer_expired(TargetDurationTimer) == 0 
                    )
                goto (
                    target                      = 'DoubleHit'
                    when                        = (CTRL_arc_flag && CTRL_fixation_penalty_flag == 0) && (CTRL_arc2_flag && CTRL_fixation2_penalty_flag == 0) && TRIAL_reactionTrigger && (CTRL_hit_flag + CTRL_hit_flag2 + CTRL_miss_flag + CTRL_miss_flag2) == 0 && timer_expired(TargetDurationTimer) == 0
                    )  
                goto (
                    target                      = 'DoubleMiss'
                    when                        = timer_expired(TargetDurationTimer) && TRIAL_reactionTrigger && (CTRL_hit_flag + CTRL_hit_flag2 + CTRL_miss_flag + CTRL_miss_flag2) == 0 
                    )              
                goto (
                    target                      = 'Check Counters'
                    when                        = timer_expired(StateDurationTimer) && TRIAL_reactionTrigger == 0
                    )
            }

            state 'Fixation break detected' {

                if (IO_fixation_flag == 0 && CTRL_fixation_break_flag == 0) {
                    //report ('FIX BREAK A')
                    CTRL_fixation_break_flag      = 1

                    start_timer (
                        timer                       = MinFixationBreakTimer
                        duration                    = CTRL_minFixBreak_duration_ms
                        duration_units              = ms
                        )  
                }

                if (IO_fixation2_flag == 0 && CTRL_fixation2_break_flag == 0) {
                    //report ('FIX BREAK B')
                    CTRL_fixation2_break_flag       = 1

                    start_timer (
                        timer                       = MinFixationBreakTimer2
                        duration                    = CTRL_minFixBreak_duration_ms
                        duration_units              = ms
                        )  
                }

                goto ('Update Stimuli')
            }

            state 'Reset CTRL_fixation_break_flag' {
                if (IO_fixation_flag && CTRL_fixation_break_flag && timer_expired(MinFixationBreakTimer)) {
                    //report ('FIX BREAK RESET A')
                    CTRL_fixation_break_flag        = 0
                }

                if (IO_fixation2_flag && CTRL_fixation2_break_flag && timer_expired(MinFixationBreakTimer2)) {
                    //report ('FIX BREAK RESET B')
                    CTRL_fixation2_break_flag       = 0
                }
            
                goto ('Update Stimuli')

            }

            state 'Fixation break penalty' {

                if (IO_fixation_flag == 0 && CTRL_fixation_break_flag) {
                    report ('FIX BREAK PENALTY A')
                    CTRL_arc_alpha                  = 0
                    CTRL_indicator_alpha            = 0
                    CTRL_fixation_penalty_flag      = 1

                    start_timer (
                        timer                       = FixBreakPenaltyTimer
                        duration                    = CTRL_fixBreak_penalty_duration_ms
                        duration_units              = ms
                        )  
                }

                if (IO_fixation2_flag == 0 && CTRL_fixation2_break_flag) {
                    report ('FIX BREAK PENALTY B')
                    CTRL_arc2_alpha                 = 0
                    CTRL_indicator2_alpha           = 0
                    CTRL_fixation2_penalty_flag     = 1

                    start_timer (
                        timer                       = FixBreakPenaltyTimer2
                        duration                    = CTRL_fixBreak_penalty_duration_ms
                        duration_units              = ms
                        )  
                }

                goto ('Update Stimuli')
            }

            state 'Fixation restored' {

                if (IO_fixation_flag && timer_expired(FixBreakPenaltyTimer) && CTRL_fixation_break_flag) {
                    report ('FIX RESTORED A')
                    CTRL_arc_alpha                  = 1
                    CTRL_indicator_alpha            = 1
                    CTRL_fixation_break_flag        = 0
                    CTRL_fixation_penalty_flag      = 0
                }

                if (IO_fixation2_flag && timer_expired(FixBreakPenaltyTimer2) && CTRL_fixation2_break_flag) {
                    report ('FIX RESTORED B')
                    CTRL_arc2_alpha                 = 1
                    CTRL_indicator2_alpha           = 1
                    CTRL_fixation2_break_flag       = 0
                    CTRL_fixation2_penalty_flag     = 0
                }

                goto ('Update Stimuli')
            }

            state 'Target presentation' {
                // Target coordinates according to RDP direction
                CTRL_target_x                   = (sin((RDP_direction)*(pi/180)) * (CTRL_target_offset)) + RDP_x
                CTRL_target_y                   = (cos((RDP_direction)*(pi/180)) * (CTRL_target_offset)) + RDP_x
                
                live_queue_stimulus (target)
                update_stimulus_display ()

                TRIAL_reactionTrigger           = 1
                INFO_TargetCounter              += 1
                INFO_TrialTargetCounter         += 1

                start_timer (
                    timer                       = TargetDurationTimer
                    duration                    = CTRL_target_duration_ms
                    duration_units              = ms
                    )

                // Block target appearance
                start_timer (
                    timer                       = Target_ITI_Timer
                    duration                    = (CTRL_target_duration_ms + CTRL_target_ITI_ms)
                    duration_units              = ms
                    )

                report ('--- SHOW TARGET $INFO_TargetCounter ---')
                goto ('Update Stimuli')
            }

            state 'Single Hit A' {
                // Set flags and add to counters
                TRIAL_outcome                   = "hit"
                CTRL_hit_flag                   = 1
                INFO_HitCounter                 += 1
                INFO_Score                      += TMP_score
                INFO_TrialScore                 += TMP_score
                CTRL_scoreBar_width             = 360 * (INFO_TrialScore/INFO_TrialTargetCounter)

                TRIAL_outcome2                  = "miss"
                CTRL_hit_flag2                  = 0
                CTRL_scoreBar2_width            = 360 * (INFO_TrialScore2/INFO_TrialTargetCounter)

                CTRL_feedback_flag              = 1

                // PRESENT AT SPEAKER R ONLY
                if (TMP_score > .875) {
                    play_sound (Reward8R_sound)
                }

                if (TMP_score > .75 && TMP_score <= .875) {
                    play_sound (Reward7R_sound)
                }

                if (TMP_score > .625 && TMP_score <= .75) {
                    play_sound (Reward6R_sound)
                }

                if (TMP_score > .5 && TMP_score <= .625) {
                    play_sound (Reward5R_sound)
                }

                if (TMP_score > .375 && TMP_score <= .5) {
                    play_sound (Reward4R_sound)
                }

                if (TMP_score > .25 && TMP_score <= .375) {
                    play_sound (Reward3R_sound)
                }

                if (TMP_score > .125 && TMP_score <= .25) {
                    play_sound (Reward2R_sound)
                }

                if (TMP_score <= .125) {
                    play_sound (Reward1R_sound)
                }

                //Visual feedback
                live_queue_stimulus (feedback1)
                live_queue_stimulus (fixationCross)
                live_queue_stimulus (fixationCross2)
                update_stimulus_display ()

                report ('--- OUTCOME: Single Hit A ---')
                report ('Score_A: $TMP_score')

                goto ('Start Feedback Timer')
            }

            state 'Single Hit B' {
                // Set flags and add to counters
                TRIAL_outcome                   = "miss"
                CTRL_hit_flag                   = 0
                CTRL_scoreBar_width            = 360 * (INFO_TrialScore/INFO_TrialTargetCounter)

                TRIAL_outcome2                  = "hit"
                CTRL_hit_flag2                  = 1
                INFO_HitCounter2                += + 1
                INFO_Score2                     += TMP_score2
                INFO_TrialScore2                += TMP_score2
                CTRL_scoreBar2_width            = 360 * (INFO_TrialScore2/INFO_TrialTargetCounter)

                CTRL_feedback_flag              = 1

                // PRESENT AT SPEAKER L ONLY
                if (TMP_score2 > .875) {
                    play_sound (Reward8L_sound)
                }

                if (TMP_score2 > .75 && TMP_score2 <= .875) {
                    play_sound (Reward7L_sound)
                }

                if (TMP_score2 > .625 && TMP_score2 <= .75) {
                    play_sound (Reward6L_sound)
                }

                if (TMP_score2 > .5 && TMP_score2 <= .625) {
                    play_sound (Reward5L_sound)
                }

                if (TMP_score2 > .375 && TMP_score2 <= .5) {
                    play_sound (Reward4L_sound)
                }

                if (TMP_score2 > .25 && TMP_score2 <= .375) {
                    play_sound (Reward3L_sound)
                }

                if (TMP_score2 > .125 && TMP_score2 <= .25) {
                    play_sound (Reward2L_sound)
                }

                if (TMP_score2 <= .125) {
                    play_sound (Reward1L_sound)
                }

                //Visual feedback
                live_queue_stimulus (feedback2)
                live_queue_stimulus (fixationCross)
                live_queue_stimulus (fixationCross2)
                update_stimulus_display ()

                report ('--- OUTCOME: Single Hit B ---')
                report ('Score_B: $TMP_score2')

                goto ('Start Feedback Timer')
            }

            state 'DoubleHit' {
                // Set flags and add to counters
                TRIAL_outcome                   = "hit"
                CTRL_hit_flag                   = 1
                INFO_HitCounter                 += 1
                INFO_Score                      += TMP_score
                INFO_TrialScore                 += TMP_score
                CTRL_scoreBar_width             = 360 * (INFO_TrialScore/INFO_TrialTargetCounter)

                TRIAL_outcome2                  = "hit"
                CTRL_hit_flag2                  = 1
                INFO_HitCounter2                += 1
                INFO_Score2                     += TMP_score2
                INFO_TrialScore2                += TMP_score2
                CTRL_scoreBar2_width            = 360 * (INFO_TrialScore2/INFO_TrialTargetCounter)

                CTRL_feedback_flag              = 1

                // PRESENT AT SPEAKER R ONLY
                if (TMP_score > .875) {
                    play_sound (Reward8R_sound)
                }

                if (TMP_score > .75 && TMP_score <= .875) {
                    play_sound (Reward7R_sound)
                }

                if (TMP_score > .625 && TMP_score <= .75) {
                    play_sound (Reward6R_sound)
                }

                if (TMP_score > .5 && TMP_score <= .625) {
                    play_sound (Reward5R_sound)
                }

                if (TMP_score > .375 && TMP_score <= .5) {
                    play_sound (Reward4R_sound)
                }

                if (TMP_score > .25 && TMP_score <= .375) {
                    play_sound (Reward3R_sound)
                }

                if (TMP_score > .125 && TMP_score <= .25) {
                    play_sound (Reward2R_sound)
                }

                if (TMP_score <= .125) {
                    play_sound (Reward1R_sound)
                }

                // PRESENT AT SPEAKER L ONLY
                if (TMP_score2 > .875) {
                    play_sound (Reward8L_sound)
                }

                if (TMP_score2 > .75 && TMP_score2 <= .875) {
                    play_sound (Reward7L_sound)
                }

                if (TMP_score2 > .625 && TMP_score2 <= .75) {
                    play_sound (Reward6L_sound)
                }

                if (TMP_score2 > .5 && TMP_score2 <= .625) {
                    play_sound (Reward5L_sound)
                }

                if (TMP_score2 > .375 && TMP_score2 <= .5) {
                    play_sound (Reward4L_sound)
                }

                if (TMP_score2 > .25 && TMP_score2 <= .375) {
                    play_sound (Reward3L_sound)
                }

                if (TMP_score2 > .125 && TMP_score2 <= .25) {
                    play_sound (Reward2L_sound)
                }

                if (TMP_score2 <= .125) {
                    play_sound (Reward1L_sound)
                }

                //Visual feedback
                live_queue_stimulus (feedback1)
                live_queue_stimulus (feedback2)
                live_queue_stimulus (fixationCross)
                live_queue_stimulus (fixationCross2)
                update_stimulus_display ()
                
                report ('--- OUTCOME: Double Hit ---')
                report ('Scofre_A: $TMP_score || Score_B: $TMP_score2')

                goto ('Start Feedback Timer')
            }  
                 
            state 'Start Feedback Timer'{
                start_timer (
                    timer                       = FeedbackTimer
                    duration                    = CTRL_feedback_ms
                    duration_units              = ms
                    )
                goto ('Update Stimuli')
            }

            state 'DoubleMiss' {
                //play_sound (Failure_sound)

                // Set flags
                TRIAL_outcome                   = "miss"
                CTRL_hit_flag                   = 0
                TRIAL_outcome2                  = "miss"
                CTRL_hit_flag2                  = 0

                CTRL_scoreBar_width             = 360 * (INFO_TrialScore/INFO_TrialTargetCounter)
                CTRL_scoreBar2_width            = 360 * (INFO_TrialScore2/INFO_TrialTargetCounter)

                report ('--- OUTCOME: Double Miss ---')

                goto (
                    target                      = 'End Trial'
                    when                        = ((INFO_StateCounter >= CTRL_NoStates) && timer_expired(StateDurationTimer)) || (INFO_TargetCounter >= CTRL_NoTargets)
                    )
                goto ('Dequeue Target')
            }  

            state 'End Trial' {
                //dequeue_stimulus (scoreBarBackground2)
                //dequeue_stimulus (scoreBar2)
                //dequeue_stimulus (scoreBarMask2)
                //dequeue_stimulus (scoreBarBackground)
                //dequeue_stimulus (scoreBar)
                //dequeue_stimulus (scoreBarMask)
                dequeue_stimulus (RDP)
                dequeue_stimulus (start_area)
                dequeue_stimulus (arc2)
                dequeue_stimulus (arcMask2)
                dequeue_stimulus (indicator2)   
                dequeue_stimulus (arc)
                dequeue_stimulus (arcMask)
                dequeue_stimulus (indicator)   
                dequeue_stimulus (fixationCross)
                dequeue_stimulus (fixationCross2)
                dequeue_stimulus (feedback1)
                dequeue_stimulus (feedback2)

                TRIAL_align                     = 0
                TRIAL_end                       = TRIAL_start

                start_timer (
                    timer                       = ITI_Timer
                    duration                    = CTRL_ITI_ms
                    duration_units              = ms
                    )

                update_stimulus_display ()
                report ('===== TRIAL $TRIAL_end ENDS =====')
                goto (ITI)
            }

            state ITI {
                CTRL_feedback_bar_height        = INFO_Score*(CTRL_feedback_frame_height/CTRL_NoTargets)
                CTRL_feedback2_bar_height       = INFO_Score2*(CTRL_feedback_frame_height/CTRL_NoTargets)
                CTRL_feedback_target_bar_height = INFO_TargetCounter*(CTRL_feedback_frame_height/CTRL_NoTargets)

                live_queue_stimulus (cum_rew_bar_frame)
                live_queue_stimulus (cum_rew_bar_surface)
                live_queue_stimulus (cum_rew_bar)
                live_queue_stimulus (cum_rew_bar2)
                live_queue_stimulus (cum_target_counter)
                update_stimulus_display ()   

                goto (
                    target                      = 'End paradigm'
                    when                        = INFO_TargetCounter >= CTRL_NoTargets && timer_expired(ITI_Timer)
                    )
                timer_expired (
                    target                      = 'Wait for Joystick Reset'
                    timer                       = ITI_Timer
                    )
            }
            state 'End paradigm' {
                update_stimulus_display ()
                report ('==== PLAYER_A: $INFO_HitCounter / $INFO_TargetCounter COINS COLLECTED ====')
                report ('==== PLAYER_B: $INFO_HitCounter2 / $INFO_TargetCounter COINS COLLECTED ====')
                report ('==== ENDING PARADIGM ====')
                play_sound (End_sound)
                cancelTrigger                   = false
                yield ()
            }
        }
    }
}
