// TO DO
// 1) Individualised auditory feedback: Present respective sound to left and right speaker separately
// 2) Debug eye fixation in CPR paradigms
// 3) Decide on baseline angular arc diameter
// 4) Dedicated local variables for each setup reg pre-tests

// Hardware:
// - Similar joysticks in both setups, ideally redesigned joystick plate; only new joystick design acceptable (circular space)
// - Screen splitter to avoid dropped samples

//
// I/O Devices
//

stimulus_display 'Stimulus Display' (0, 0, 0)
iodevice/mio mIO (
    data_interval                           = 1ms
    joystick_direction                      = IO_joystickDirection
    joystick_strength                       = IO_joystickStrength
    joystick_x_raw                          = IO_joystickX_raw
    joystick_y_raw                          = IO_joystickY_raw
    
    // Use with single IO/Board
    //joystick_b_direction                    = IO_joystickDirection2
    //joystick_b_strength                     = IO_joystickStrength2
    //joystick_b_x_raw                        = IO_joystickX_raw2
    //joystick_b_y_raw                        = IO_joystickY_raw2
    )

eyelink Eyelink (
    data_interval                           = 1ms
    eye_rx                                  = EYE_rightX_raw
    eye_ry                                  = EYE_rightY_raw
    eye_lx                                  = EYE_leftX_raw
    eye_ly                                  = EYE_leftY_raw
    eye_x                                   = EYE_x_raw
    eye_y                                   = EYE_y_raw
    href_rx                                 = EYE_hrefRightX
    href_ry                                 = EYE_hrefRightY
    href_lx                                 = EYE_hrefLeftX
    href_ly                                 = EYE_hrefLeftY
    pupil_rx                                = EYE_pupilRightX
    pupil_ry                                = EYE_pupilRightY
    pupil_lx                                = EYE_pupilLeftX
    pupil_ly                                = EYE_pupilLeftY
    pupil_size_r                            = EYE_pupilRightSize
    pupil_size_l                            = EYE_pupilLeftSize
    eye_time                                = EYE_sampleTime
    tracking_dist                           = 1024
    tracker_ip                              = '100.1.1.1'
    )

// In dyadic setting, import data through network connection
iodevice/getstream 'getStream' (
    data_interval                           = 1ms
    ip                                      = (string)'172.17.10.40'
    port                                    = 3490
    
    name_01                                 = (string)'IO_joystickDirection'
    stream_01                               = IO_joystickDirection2

    name_02                                 = (string)'IO_joystickStrength'
    stream_02                               = IO_joystickStrength2

    name_03                                 = (string)'IO_joystickX_raw'
    stream_03                               = IO_joystickX2_raw

    name_04                                 = (string)'IO_joystickY_raw'
    stream_04                               = IO_joystickY2_raw
    
    name_05                                 = (string)'EYE_rightX_raw'
    stream_05                               = EYE_rightX2_raw

    name_06                                 = (string)'EYE_rightY_raw'
    stream_06                               = EYE_rightY2_raw
 
    name_07                                 = (string)'EYE_leftX_raw'
    stream_07                               = EYE_leftX2_raw

    name_08                                 = (string)'EYE_leftY_raw'
    stream_08                               = EYE_leftY2_raw   

    name_09                                 = (string)'EYE_x_raw'
    stream_09                               = EYE_x2_raw

    name_10                                 = (string)'EYE_y_raw'
    stream_10                               = EYE_y2_raw

    name_11                                 = (string)'EYE_hrefRightX'
    stream_11                               = EYE_hrefRightX2

    name_12                                 = (string)'EYE_hrefRightY'
    stream_12                               = EYE_hrefRightY2

    name_13                                 = (string)'EYE_hrefLeftX'
    stream_13                               = EYE_hrefLeftX2

    name_14                                 = (string)'EYE_hrefLeftY'
    stream_14                               = EYE_hrefLeftY2

    name_15                                 = (string)'EYE_pupilRightX'
    stream_15                               = EYE_pupilRightX2

    name_16                                 = (string)'EYE_pupilRightY'
    stream_16                               = EYE_pupilRightY2

    name_17                                 = (string)'EYE_pupilLeftX'
    stream_17                               = EYE_pupilLeftX2

    name_18                                 = (string)'EYE_pupilLeftY'
    stream_18                               = EYE_pupilLeftY2

    name_19                                 = (string)'EYE_pupilRightSize'
    stream_19                               = EYE_pupilRightSize2

    name_20                                 = (string)'EYE_pupilLeftSize'
    stream_20                               = EYE_pupilLeftSize2

    name_21                                 = (string)'EYE_sampleTime'
    stream_21                               = EYE_sampleTime2
    )

// psycho3
standard_eye_calibrator EyeCalibrator (
    eyeh_raw                                = EYE_x_raw
    eyev_raw                                = EYE_y_raw
    eyeh_calibrated                         = EYE_x_dva
    eyev_calibrated                         = EYE_y_dva
    )

basic_eye_monitor EyeMonitor (
    eyeh_calibrated                         = EYE_x_dva
    eyev_calibrated                         = EYE_y_dva
    eye_state                               = EYE_saccade
    width_samples                           = 5
    saccade_entry_speed                     = 50
    saccade_exit_speed                      = 20
    )

// psycho4
standard_eye_calibrator EyeCalibrator2 (
    eyeh_raw                                = EYE_x2_raw
    eyev_raw                                = EYE_x2_raw
    eyeh_calibrated                         = EYE_x2_dva
    eyev_calibrated                         = EYE_y2_dva
    )

basic_eye_monitor EyeMonitor2 (
    eyeh_calibrated                         = EYE_x2_dva
    eyev_calibrated                         = EYE_y2_dva
    eye_state                               = EYE_saccade2
    width_samples                           = 5
    saccade_entry_speed                     = 50
    saccade_exit_speed                      = 20
    )

//
// Variables
//

group INFO {
    var INFO_task                           = 0
    var INFO_SteadyStateCounter             = 0
    var INFO_CoherenceStateCounter          = 0
    var INFO_TargetCounter                  = 0
    var INFO_HitCounter                     = 0
    var INFO_HitCounter2                    = 0
    var INFO_ErrorCounter                   = 0
    var INFO_ErrorCounter2                  = 0
    var INFO_Cash                           = 0
    var INFO_Cash2                          = 0
}

group CTRL {
	var CTRL_Xmax                           = 15.2024
    var CTRL_Ymax                           = 11.4018
    var CTRL_RequiredHitNo                  = 0
    var CTRL_NoTargets                      = 0
	var CTRL_NoSteadyStates                 = 0
    var CTRL_NoCoherenceStates              = 0 
	var CTRL_steadyState_min_ms             = 0 
    var CTRL_steadyState_max_ms             = 0
    var CTRL_SteadyStateDuration_ms         = 0
    var CTRL_TargetDelay_ms                 = 0
    //var CTRL_snr_list                       = [1]
    var CTRL_snr_list                       = [0, .1,.1682, .2828, .4757, .8]
    var CTRL_directionChange_list           = [30,60,90]
    var CTRL_ITI_ms                         = 0
    var CTRL_change_mangitude               = 0
    var CTRL_cpr_treshold                   = 0
    var CTRL_cash_per_target                = .05 // Euro

    var CTRL_arc_alpha                      = 0
    var CTRL_arc_flag                       = 0
    var CTRL_arc2_flag                      = 0
    var CTRL_arc2_alpha                     = 0
    var CTRL_arc_size                       = 0
    var CTRL_arc2_size                      = 0

	var CTRL_start_area_size                = 0 
    var CTRL_start_area_alpha               = 0
    var CTRL_start_area_flag                = 0
    
    var CTRL_target_idx                     = 0
    var CTRL_target_size                    = 0
    var CTRL_target_deg                     = 0
    var CTRL_target_duration_ms             = 0
    var CTRL_target_direction               = 0
    var CTRL_target_flag                    = 0
    var CTRL_target2_flag                   = 0
    var CTRL_target3_flag                   = 0
    var CTRL_target4_flag                   = 0
    var CTRL_target_x                       = 0
    var CTRL_target2_x                      = 0
    var CTRL_target3_x                      = 0
    var CTRL_target4_x                      = 0
    var CTRL_target_y                       = 0    
    var CTRL_target2_y                      = 0    
    var CTRL_target3_y                      = 0    
    var CTRL_target4_y                      = 0    
    var CTRL_target_alpha                   = .75
    var CTRL_target_offset                  = 8
    var CTRL_target_ITI_ms                  = 500

    var CTRL_feedback_alpha 				= 1
    var CTRL_feedback_ms                    = 150

    var CTRL_hit_flag 					    = 0
    var CTRL_miss_flag                      = 0
    var CTRL_hit_flag2                      = 0
    var CTRL_miss_flag2                     = 0

    var CTRL_PreRT_ResponseWindow           = 0
    var CTRL_PreSNR_StimDuration            = 0

    var CTRL_cursor_radius                  = .5

    var CTRL_indicator_size                 = .3
    var CTRL_indicator_offset               = 1.5
    var CTRL_indicator_alpha                = 1
    var CTRL_indicator2_offset              = 1
    var CTRL_indicator2_alpha               = 1
    
    var CTRL_fixationWidth_dva              = 100
    var CTRL_fixation_duration_ms           = 500
    var CTRL_fixationDotSize_dva            = .3
    var CTRL_fixation_alpha                 = 1
    var CTRL_fixation2_alpha                = 1
    var CTRL_fixation_size                  = .3
    var CTRL_fixation_break_flag            = 0
    var CTRL_fixation_penalty_flag          = 0
    var CTRL_fixation2_break_flag           = 0
    var CTRL_fixation2_penalty_flag         = 0
    var CTRL_minFixBreak_duration_ms        = 250
    var CTRL_fixBreak_penalty_duration_ms   = 250

    var CTRL_scoreBar_width                 = 0
    var CTRL_scoreBar_size                  = 19.2
    var CTRL_scoreBar_alpha                 = .5
    var CTRL_scoreBarBackground_alpha       = .05
    var CTRL_scoreBar2_width                = 0
    var CTRL_scoreBar2_size                 = 20.4
    var CTRL_scoreBar2_alpha                = .5
    var CTRL_scoreBarBackground2_alpha      = .05
    var CTRL_targetBar_width                = 0
    var CTRL_targetBar_size                 = 18
    var CTRL_targetBar_alpha                = .5
    var CTRL_targetBarBackground_alpha      = .05
    var CTRL_barwidth                       = .9
}

group TRIAL {
    var TRIAL_start                         = 0
    var TRIAL_end                           = 0
    var TRIAL_reactionEvent                 = 0
    var TRIAL_reactionEvent_ts              = 0
    var TRIAL_reactionTrigger               = 0
    var TRIAL_reactionTrigger_ts            = 0
    var TRIAL_RT                            = 0
    var TRIAL_align                         = 0
    var TRIAL_type                          = 0
    var TRIAL_outcome                       = 0
    var TRIAL_outcome2                      = 0
}

group TMP {
    var pi                                  = 3.14159265359
    var TMP_dice 							= 0
	var TMP_RDPdir 							= 0
	var TMP_normJoyDir   					= 0
	var TMP_Cash							= 0
 	var TMP_Feedback						= 0
 	var TMP_accuracy 						= 0
    var TMP_score                           = 0 

    var TMP_normJoyDir2                     = 0
    var TMP_Cash2                           = 0
    var TMP_Feedback2                       = 0
    var TMP_accuracy2                       = 0
    var TMP_score2                          = 0
    
    var fixationPoint_posY                  = 0
    var fixationPoint_posX                  = 0 
    var cnt                                 = 0
    var lst_value                           = 0
}

group ML {
    var ML_sync                             = 0
}

group EYE { // CHANGE VARIABLE NAMES
    var EYE_rightX_raw                      = (float)(0)(persistant = YES)
    var EYE_rightY_raw                      = (float)(0)(persistant = YES)
    var EYE_leftX_raw                       = (float)(0)(persistant = YES)
    var EYE_leftY_raw                       = (float)(0)(persistant = YES)
    var EYE_x_raw                           = (float)(0)(persistant = YES)
    var EYE_y_raw                           = (float)(0)(persistant = YES)
    var EYE_hrefRightX                      = (integer)(0)(persistant = YES)
    var EYE_hrefRightY                      = (integer)(0)(persistant = YES)
    var EYE_hrefLeftX                       = (integer)(0)(persistant = YES)
    var EYE_hrefLeftY                       = (integer)(0)(persistant = YES)
    var EYE_pupilRightX                     = (integer)(0)(persistant = YES)
    var EYE_pupilRightY                     = (integer)(0)(persistant = YES)
    var EYE_pupilLeftX                      = (integer)(0)(persistant = YES)
    var EYE_pupilLeftY                      = (integer)(0)(persistant = YES)
    var EYE_pupilRightSize                  = (integer)(0)(persistant = YES)
    var EYE_pupilLeftSize                   = (integer)(0)(persistant = YES)
    var EYE_sampleTime                      = (integer)0 (persistant = YES)
    var EYE_x_dva                           = (integer)0 (persistant = YES)
    var EYE_y_dva                           = (integer)0 (persistant = YES)
    var EYE_saccade                         = (integer)0 (persistant = YES)
    
    var EYE_rightX2_raw                     = (float)(0)(persistant = YES)
    var EYE_rightY2_raw                     = (float)(0)(persistant = YES)
    var EYE_leftX2_raw                      = (float)(0)(persistant = YES)
    var EYE_leftY2_raw                      = (float)(0)(persistant = YES)
    var EYE_x2_raw                          = (float)(0)(persistant = YES)
    var EYE_y2_raw                          = (float)(0)(persistant = YES)
    var EYE_hrefRightX2                     = (integer)(0)(persistant = YES)
    var EYE_hrefRightY2                     = (integer)(0)(persistant = YES)
    var EYE_hrefLeftX2                      = (integer)(0)(persistant = YES)
    var EYE_hrefLeftY2                      = (integer)(0)(persistant = YES)
    var EYE_pupilRightX2                    = (integer)(0)(persistant = YES)
    var EYE_pupilRightY2                    = (integer)(0)(persistant = YES)
    var EYE_pupilLeftX2                     = (integer)(0)(persistant = YES)
    var EYE_pupilLeftY2                     = (integer)(0)(persistant = YES)
    var EYE_pupilRightSize2                 = (integer)(0)(persistant = YES)
    var EYE_pupilLeftSize2                  = (integer)(0)(persistant = YES)
    var EYE_sampleTime2                     = (integer)0 (persistant = YES)
    var EYE_x2_dva                          = (integer)0 (persistant = YES)
    var EYE_y2_dva                          = (integer)0 (persistant = YES)
    var EYE_saccade2                        = (integer)0 (persistant = YES)

    var local_posX                          = 0 (scope = local)
    var local_posY                          = 0 (scope = local)
}

group RDP {
    var RDP_direction                       = 0 {
        if (TRIAL_start > TRIAL_end) {
    		// Restrict to circular space [0:359]
    		TMP_RDPdir 					    = (RDP_direction + 360) % 360
        }
    }
    var RDP_radius                          = 8
    var RDP_y                               = 0
    var RDP_x                               = 0
    var RDP_density                         = 2.5
    var RDP_dotsize                         = .1
    var RDP_speed                           = 8
    var RDP_coherence                       = 0
    var RDP_lifetime                        = 200
    var RDP_alpha                        	= 1
    var RDP_seed                            = 1
}

group COL {
    var COL_bg_r                            = 0
    var COL_bg_g                            = 0
    var COL_bg_b                            = 0
    var COL_rdp_r                           = 1
    var COL_rdp_g                           = 1
    var COL_rdp_b                           = 1
    var COL_start_area_r                    = 0
    var COL_start_area_g                    = 0
    var COL_start_area_b                    = 0
    var COL_cursor_r 						= 1
    var COL_cursor_g 						= 1
    var COL_cursor_b 						= 1
    var COL_arc_r                           = 1
    var COL_arc_g                           = 0
    var COL_arc_b                           = 0
    var COL_arc2_r                          = 0
    var COL_arc2_g                          = 1
    var COL_arc2_b                          = 0    
    var COL_target_r                        = 1
    var COL_target_g                        = 1
    var COL_target_b                        = 1
    var COL_feedback_r                      = 1
    var COL_feedback_g                      = 0
    var COL_feedback_b                      = 0
    var COL_feedback2_r                     = 0
    var COL_feedback2_g                     = 1
    var COL_feedback2_b                     = 0
    var COL_fix_r                           = 1
    var COL_fix_g                           = 1
    var COL_fix_b                           = 1
    var COL_fix2_r                          = 1
    var COL_fix2_g                          = 1
    var COL_fix2_b                          = 1
    var COL_scoreBar_r                      = 1
    var COL_scoreBar_g                      = 0
    var COL_scoreBar_b                      = 0
    var COL_scoreBar2_r                     = 0
    var COL_scoreBar2_g                     = 1
    var COL_scoreBar2_b                     = 0
    var COL_targetBar_r                     = .1
    var COL_targetBar_g                     = .1
    var COL_targetBar_b                     = .1
}

group IO {
    var IO_fixation_flag                    = 0
    var IO_fixation2_flag                   = 0
    var IO_arc_width                    	= 0
	var IO_arc_trigger_min               	= 0
    var IO_arc_trigger_max               	= 0  
	var IO_cursor_x                       	= 0
    var IO_cursor_y                       	= 0
    var IO_joystickX_raw                 	= 0 {
            IO_cursor_x                     = (((IO_joystickX_raw/511.5)-1) * CTRL_Xmax) + RDP_x
    }
    var IO_joystickY_raw                    = 0 {
            IO_cursor_y                     = (((IO_joystickY_raw/511.5)-1) * CTRL_Ymax) + RDP_y
    }
    var IO_joystickStrength                 = 0 {                     
        if (TRIAL_start > TRIAL_end) {
            // Set arc width
      		IO_arc_width                    = 180 - (180 * IO_joystickStrength) 
      		
      		// Fix minimum arc size
            if (IO_arc_width < CTRL_target_deg) {
             	IO_arc_width        		= CTRL_target_deg
          	} 

            // Target
            if (TRIAL_reactionTrigger == 0) {
            CTRL_target_idx                 = disc_rand(0,199) // Show target? --> Turn into macro...
            }
        }
    }
    var IO_joystickDirection                = 0 {
        if (TRIAL_start > TRIAL_end) {
        	// Calculate tracking accuracy and reward
    		TMP_normJoyDir                  = (int)(((int)IO_joystickDirection + (180-TMP_RDPdir) + 360) % 360) 
            TMP_accuracy           			= abs(1 - abs(TMP_RDPdir - IO_joystickDirection) / 180)
            TMP_score                       = IO_joystickStrength * TMP_accuracy
            TMP_Cash                        = TMP_score * CTRL_cash_per_target      
              
            // Fix reward
    		if (IO_joystickStrength > 1) {
            	TMP_Cash                    = round(( (1 + TMP_accuracy) /2) *100) /1000
            }
            TMP_Feedback                  	= 360 * (TMP_Cash / .1)   
            
            // Compute trigger boundaries & flag
            IO_arc_trigger_min              = (int)(((int)(TMP_RDPdir - (IO_arc_width/2) + 360) % 360) + ((180-TMP_RDPdir) + 360)) % 360
            IO_arc_trigger_max              = (int)(((int)(TMP_RDPdir + (IO_arc_width/2) + 360) % 360) + ((180-TMP_RDPdir) + 360)) % 360
            CTRL_arc_flag                   = (TMP_normJoyDir >= IO_arc_trigger_min) && (TMP_normJoyDir <= IO_arc_trigger_max)     
        }
    }

    var IO_arc2_width                       = 0
    var IO_arc2_trigger_min                 = 0
    var IO_arc2_trigger_max                 = 0  
    var IO_cursor2_x                        = 0
    var IO_cursor2_y                        = 0
    var IO_joystickX2_raw                   = 0
    var IO_joystickY2_raw                   = 0
    var IO_joystickStrength2                = 0 {                     
        if (TRIAL_start > TRIAL_end) {
            // Set arc width
            IO_arc2_width                   = 180 - (180 * IO_joystickStrength2) 
            
            // Fix minimum arc size
            if (IO_arc2_width < CTRL_target_deg) {
                IO_arc2_width               = CTRL_target_deg
            }
        } 
    }
    var IO_joystickDirection2               = 0 {
        if (TRIAL_start > TRIAL_end) {
            // Calculate tracking accuracy and reward
            TMP_normJoyDir2                 = (int)(((int)IO_joystickDirection2 + (180-TMP_RDPdir) + 360) % 360) 
            TMP_accuracy2                   = abs(1 - abs(TMP_RDPdir - IO_joystickDirection2) / 180)
            TMP_score2                      = IO_joystickStrength2 * TMP_accuracy2
            TMP_Cash2                       = TMP_score2 * CTRL_cash_per_target 

            // Fix reward
            if (IO_joystickStrength2 > 1) {
                TMP_Cash2                  = round(( (1 + TMP_accuracy2) /2) *100) /1000
            }
            
            // Compute trigger boundaries & flag
            IO_arc2_trigger_min             = (int)(((int)(TMP_RDPdir - (IO_arc2_width/2) + 360) % 360) + ((180-TMP_RDPdir) + 360)) % 360
            IO_arc2_trigger_max             = (int)(((int)(TMP_RDPdir + (IO_arc2_width/2) + 360) % 360) + ((180-TMP_RDPdir) + 360)) % 360
            CTRL_arc2_flag                  = (TMP_normJoyDir2 >= IO_arc2_trigger_min) && (TMP_normJoyDir2 <= IO_arc2_trigger_max)   
        }
    }
}

group Selection {
    selection SEL_snr (
        values                              = 0, .06, .08, .1067, .1423, .1897, .2530, .3374, .4499, .6
        selection                           = random_without_replacement
        nsamples                            = 1000
        sampling_method                     = cycles
        advance_on_accept                   = YES
        autoreset                           = YES
        )

    selection EYE_pos (
    values                                  = 1:9 // x = mod(3) // y/3
    selection                               = random_without_replacement
    nsamples                                = 1
    sampling_method                         = cycles
    advance_on_accept                       = YES
    autoreset                               = YES
    )
}

//
// Sounds
//

wav_file Acquire_sound ('./sounds/acquire.wav')
wav_file Failure_sound ('./sounds/failure2.wav')
wav_file Reward_sound ('./sounds/reward.wav')
wav_file Reward_sound_2 ('./sounds/reward_2.wav')
wav_file Reward_sound_3 ('./sounds/reward_3.wav')
wav_file SuperReward_sound ('./sounds/Power Up.wav')
wav_file End_sound ('./sounds/Defeat Bowser.wav')

//
// Stimuli
//

blank_screen Background (
    color                       			= COL_bg_r,COL_bg_g,COL_bg_b
    )

stimulus/advstimulus fixationPoint_psycho3 (
    trigger_width                           = CTRL_fixationWidth_dva
    trigger_watch_x                         = EYE_x_dva
    trigger_watch_y                         = EYE_y_dva
    trigger_flag                            = IO_fixation_flag
    x_size                                  = CTRL_fixationDotSize_dva
    y_size                                  = CTRL_fixationDotSize_dva
    x_position                              = fixationPoint_posX
    y_position                              = fixationPoint_posY
    shape                                   = format("circle")
    color                                   = 1,1,1
    rotation                                = 0
    alpha_multiplier                        = 1
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus fixationPoint_psycho4 (
    trigger_width                           = CTRL_fixationWidth_dva
    trigger_watch_x                         = EYE_x2_dva
    trigger_watch_y                         = EYE_y2_dva
    trigger_flag                            = IO_fixation2_flag
    x_size                                  = CTRL_fixationDotSize_dva
    y_size                                  = CTRL_fixationDotSize_dva
    x_position                              = fixationPoint_posX
    y_position                              = fixationPoint_posY
    shape                                   = format("circle")
    color                                   = 1,1,1
    rotation                                = 0
    alpha_multiplier                        = 1
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus fixationCross (
    trigger_width                           = CTRL_fixationWidth_dva
    trigger_watch_x                         = EYE_x_dva
    trigger_watch_y                         = EYE_y_dva
    trigger_flag                            = IO_fixation_flag
    x_size                                  = CTRL_fixation_size
    y_size                                  = CTRL_fixation_size
    x_position                              = RDP_x
    y_position                              = RDP_y
    shape                                   = format("cross")
    color                                   = COL_fix_r,COL_fix_g,COL_fix_b
    rotation                                = 0
    alpha_multiplier                        = CTRL_fixation_alpha
    version                                 = 1
    autoplay                                = YES
    )
    
stimulus/advstimulus fixationCross2 (
    trigger_width                           = CTRL_fixationWidth_dva
    trigger_watch_x                         = EYE_x2_dva
    trigger_watch_y                         = EYE_y2_dva
    trigger_flag                            = IO_fixation2_flag
    x_size                                  = CTRL_fixation_size
    y_size                                  = CTRL_fixation_size
    x_position                              = RDP_x
    y_position                              = RDP_y
    shape                                   = format("cross")
    color                                   = COL_fix2_r,COL_fix2_g,COL_fix2_b
    rotation                                = 0
    alpha_multiplier                        = CTRL_fixation2_alpha
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus cursor (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = 0
    x_size                                  = CTRL_cursor_radius * 2
    y_size                                  = CTRL_cursor_radius * 2
    x_position                              = IO_cursor_x
    y_position                              = IO_cursor_y
    shape                                   = format("circle")
    color                                   = COL_cursor_r,COL_cursor_g,COL_cursor_b
    rotation                                = 0
    alpha_multiplier                        = 1
    version                                 = 1
    autoplay                                = YES
    )

stimulus/r_d_p RDP (
    radius                      			= RDP_radius
    x_position                  			= RDP_x
    y_position                  			= RDP_y
    dot_density                 			= RDP_density
    dot_size                    			= RDP_dotsize
    color                       			= COL_rdp_r,COL_rdp_g,COL_rdp_b
    alpha_multiplier            			= RDP_alpha
    direction                   			= RDP_direction
    speed                       			= RDP_speed
    coherence                   			= RDP_coherence
    lifetime                    			= RDP_lifetime
    announce_dots               			= YES // YES for dot position
    autoplay                    			= YES
    )

stimulus/advstimulus start_area (
    trigger_width               			= CTRL_start_area_size
    trigger_watch_x             			= IO_cursor_x   
    trigger_watch_y             			= IO_cursor_y   
    trigger_flag                			= CTRL_start_area_flag
    x_size                      			= CTRL_start_area_size
    y_size                      			= CTRL_start_area_size
    x_position                  			= RDP_x
    y_position                  			= RDP_y
    shape                       			= format("circle")
    color                       			= COL_start_area_r,COL_start_area_g,COL_start_area_b
    rotation                    			= 0
    alpha_multiplier            			= CTRL_start_area_alpha
    version                     			= 1
    autoplay                    			= YES
    )

stimulus/advstimulus arc (
    trigger_width               			= 0
    trigger_watch_x             			= 0
    trigger_watch_y             			= 0
    trigger_flag                			= CTRL_arc_flag
    x_size                      			= CTRL_arc_size
    y_size                      			= CTRL_arc_size
    x_position                  			= RDP_x
    y_position                  			= RDP_y
    shape                       			= format("circle %d", (integer)IO_arc_width)    
    color                       			= COL_arc_r,COL_arc_g,COL_arc_b
    rotation                    			= -IO_joystickDirection + (IO_arc_width/2)
    alpha_multiplier            			= CTRL_arc_alpha
    version                     			= 1
    autoplay                    			= YES
    )

stimulus/advstimulus arcMask (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = 0
    x_size                                  = CTRL_arc_size - (CTRL_arc_size/10)
    y_size                                  = CTRL_arc_size - (CTRL_arc_size/10)
    x_position                              = RDP_x
    y_position                              = RDP_y
    shape                                   = format("circle %d", (integer)360)    
    color                                   = COL_start_area_r,COL_start_area_g,COL_start_area_b
    rotation                                = 1
    alpha_multiplier                        = 1
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus arc2 (
    trigger_width                           = CTRL_arc_size+.5
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = CTRL_arc2_flag
    x_size                                  = CTRL_arc_size+.5
    y_size                                  = CTRL_arc_size+.5
    x_position                              = -RDP_x
    y_position                              = RDP_y
    shape                                   = format("circle %d", (integer)IO_arc2_width)    
    color                                   = COL_arc2_r,COL_arc2_g,COL_arc2_b
    rotation                                = -IO_joystickDirection2 + (IO_arc2_width/2)
    alpha_multiplier                        = CTRL_arc2_alpha
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus arcMask2 (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = 0
    x_size                                  = (CTRL_arc_size+.5) - ((CTRL_arc_size+.5)/10)
    y_size                                  = (CTRL_arc_size+.5) - ((CTRL_arc_size+.5)/10)
    x_position                              = -RDP_x
    y_position                              = RDP_y
    shape                                   = format("circle %d", (integer)IO_arc2_width)    
    color                                   = COL_start_area_r,COL_start_area_g,COL_start_area_b
    rotation                                = -IO_joystickDirection2 + (IO_arc2_width/2)
    alpha_multiplier                        = 1
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus indicator (
    trigger_width               			= 0
    trigger_watch_x             			= 0
    trigger_watch_y             			= 0
    trigger_flag                			= 0
    x_size                      			= CTRL_indicator_size
    y_size                      			= CTRL_indicator_size
    x_position                  			= (sin((IO_joystickDirection)*(pi/180)) * CTRL_indicator_offset) + RDP_x
    y_position                  			= (cos((IO_joystickDirection)*(pi/180)) * CTRL_indicator_offset) + RDP_y
    shape                       			= format("symmetric 3")
    color                       			= COL_arc_r,COL_arc_g,COL_arc_b
    rotation                    			= -IO_joystickDirection
    alpha_multiplier            			= CTRL_indicator_alpha
    version                     			= 1
    autoplay                    			= YES
    )

stimulus/advstimulus indicator2 (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = 0
    x_size                                  = CTRL_indicator_size
    y_size                                  = CTRL_indicator_size
    x_position                              = (sin((IO_joystickDirection2)*(pi/180)) * CTRL_indicator2_offset) - RDP_x
    y_position                              = (cos((IO_joystickDirection2)*(pi/180)) * CTRL_indicator2_offset) + RDP_y
    shape                                   = format("symmetric 3")
    color                                   = COL_arc2_r,COL_arc2_g,COL_arc2_b
    rotation                                = -IO_joystickDirection2
    alpha_multiplier                        = CTRL_indicator2_alpha
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus target (
    trigger_width               			= CTRL_target_size
    trigger_watch_x                         = IO_cursor_x
    trigger_watch_y                         = IO_cursor_y
    trigger_flag                			= CTRL_target_flag
    x_size                      			= CTRL_target_size
    y_size                      			= CTRL_target_size
    x_position                  			= CTRL_target_x
    y_position                  			= CTRL_target_y
    shape                       			= format("circle")
    color                       			= COL_target_r,COL_target_g,COL_target_b
    rotation                    			= 0
    alpha_multiplier            			= CTRL_target_alpha
    version                     			= 1
    autoplay                    			= YES
    )

stimulus/advstimulus target2 (
    trigger_width                           = CTRL_target_size
    trigger_watch_x                         = IO_cursor_x
    trigger_watch_y                         = IO_cursor_y
    trigger_flag                            = CTRL_target2_flag
    x_size                                  = CTRL_target_size
    y_size                                  = CTRL_target_size
    x_position                              = CTRL_target2_x
    y_position                              = CTRL_target2_y
    shape                                   = format("circle")
    color                                   = COL_target_r,COL_target_g,COL_target_b
    rotation                                = 0
    alpha_multiplier                        = CTRL_target_alpha
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus target3 (
    trigger_width                           = CTRL_target_size
    trigger_watch_x                         = IO_cursor_x
    trigger_watch_y                         = IO_cursor_y
    trigger_flag                            = CTRL_target3_flag
    x_size                                  = CTRL_target_size
    y_size                                  = CTRL_target_size
    x_position                              = CTRL_target3_x
    y_position                              = CTRL_target3_y
    shape                                   = format("circle")
    color                                   = COL_target_r,COL_target_g,COL_target_b
    rotation                                = 0
    alpha_multiplier                        = CTRL_target_alpha
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus target4 (
    trigger_width                           = CTRL_target_size
    trigger_watch_x                         = IO_cursor_x
    trigger_watch_y                         = IO_cursor_y
    trigger_flag                            = CTRL_target4_flag
    x_size                                  = CTRL_target_size
    y_size                                  = CTRL_target_size
    x_position                              = CTRL_target4_x
    y_position                              = CTRL_target4_y
    shape                                   = format("circle")
    color                                   = COL_target_r,COL_target_g,COL_target_b
    rotation                                = 0
    alpha_multiplier                        = CTRL_target_alpha
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus feedback (
    trigger_width               			= 0
    trigger_watch_x             			= 0
    trigger_watch_y             			= 0
    trigger_flag                			= 0
    x_size                      			= TMP_score*2
    y_size                      			= TMP_score*2
    x_position                  			= RDP_x
    y_position                  			= RDP_y
    shape                       			= format("circle %d", (integer)360)
    color                       			= COL_feedback_r,COL_feedback_g,COL_feedback_b
    rotation                    			= 0
    alpha_multiplier            			= CTRL_feedback_alpha
    version                     			= 1
    autoplay                    			= YES
    )

stimulus/advstimulus feedback1 (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = 0
    x_size                                  = TMP_score*2
    y_size                                  = TMP_score*2
    x_position                              = RDP_x
    y_position                              = RDP_y
    shape                                   = format("circle %d", (integer)180)
    color                                   = COL_feedback_r,COL_feedback_g,COL_feedback_b
    rotation                                = 0
    alpha_multiplier                        = CTRL_feedback_alpha
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus feedback2 (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = 0
    x_size                                  = TMP_score2*2
    y_size                                  = TMP_score2*2
    x_position                              = RDP_x
    y_position                              = RDP_y
    shape                                   = format("circle %d", (integer)180)
    color                                   = COL_feedback2_r,COL_feedback2_g,COL_feedback2_b
    rotation                                = 180
    alpha_multiplier                        = CTRL_feedback_alpha
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus targetBar (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = 0
    x_size                                  = CTRL_targetBar_size
    y_size                                  = CTRL_targetBar_size
    x_position                              = RDP_x
    y_position                              = RDP_y
    shape                                   = format("circle %d", (integer)CTRL_targetBar_width)    
    color                                   = COL_targetBar_r,COL_targetBar_g,COL_targetBar_b
    rotation                                = 0
    alpha_multiplier                        = CTRL_targetBar_alpha
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus targetBarBackground (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = 0
    x_size                                  = CTRL_targetBar_size
    y_size                                  = CTRL_targetBar_size
    x_position                              = RDP_x
    y_position                              = RDP_y
    shape                                   = format("circle %d", (integer)360)    
    color                                   = COL_targetBar_r,COL_targetBar_g,COL_targetBar_b
    rotation                                = 0
    alpha_multiplier                        = CTRL_targetBarBackground_alpha
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus targetBarMask (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = 0
    x_size                                  = CTRL_targetBar_size - CTRL_barwidth
    y_size                                  = CTRL_targetBar_size - CTRL_barwidth
    x_position                              = RDP_x
    y_position                              = RDP_y
    shape                                   = format("circle %d", (integer)360)    
    color                                   = 0,0,0
    rotation                                = 0
    alpha_multiplier                        = 1
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus scoreBar (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = 0
    x_size                                  = CTRL_scoreBar_size
    y_size                                  = CTRL_scoreBar_size
    x_position                              = RDP_x
    y_position                              = RDP_y
    shape                                   = format("circle %d", (integer)CTRL_scoreBar_width)    
    color                                   = COL_scoreBar_r,COL_scoreBar_g,COL_scoreBar_b
    rotation                                = 0
    alpha_multiplier                        = CTRL_scoreBar_alpha
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus scoreBarBackground (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = 0
    x_size                                  = CTRL_scoreBar_size
    y_size                                  = CTRL_scoreBar_size
    x_position                              = RDP_x
    y_position                              = RDP_y
    shape                                   = format("circle %d", (integer)360)    
    color                                   = COL_scoreBar_r,COL_scoreBar_g,COL_scoreBar_b
    rotation                                = 0
    alpha_multiplier                        = CTRL_scoreBarBackground_alpha
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus scoreBarMask (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = 0
    x_size                                  = CTRL_scoreBar_size - CTRL_barwidth
    y_size                                  = CTRL_scoreBar_size - CTRL_barwidth
    x_position                              = RDP_x
    y_position                              = RDP_y
    shape                                   = format("circle %d", (integer)360)    
    color                                   = 0,0,0
    rotation                                = 0
    alpha_multiplier                        = 1
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus scoreBar2 (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = 0
    x_size                                  = CTRL_scoreBar2_size
    y_size                                  = CTRL_scoreBar2_size
    x_position                              = RDP_x
    y_position                              = RDP_y
    shape                                   = format("circle %d", (integer)CTRL_scoreBar2_width)    
    color                                   = COL_scoreBar2_r,COL_scoreBar2_g,COL_scoreBar2_b
    rotation                                = 0
    alpha_multiplier                        = CTRL_scoreBar2_alpha
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus scoreBarBackground2 (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = 0
    x_size                                  = CTRL_scoreBar2_size
    y_size                                  = CTRL_scoreBar2_size
    x_position                              = RDP_x
    y_position                              = RDP_y
    shape                                   = format("circle %d", (integer)360)    
    color                                   = COL_scoreBar2_r,COL_scoreBar2_g,COL_scoreBar2_b
    rotation                                = 0
    alpha_multiplier                        = CTRL_scoreBarBackground2_alpha
    version                                 = 1
    autoplay                                = YES
    )

stimulus/advstimulus scoreBarMask2 (
    trigger_width                           = 0
    trigger_watch_x                         = 0
    trigger_watch_y                         = 0
    trigger_flag                            = 0
    x_size                                  = CTRL_scoreBar2_size - CTRL_barwidth
    y_size                                  = CTRL_scoreBar2_size - CTRL_barwidth
    x_position                              = RDP_x
    y_position                              = RDP_y
    shape                                   = format("circle %d", (integer)360)    
    color                                   = 0,0,0
    rotation                                = 0
    alpha_multiplier                        = 1
    version                                 = 1
    autoplay                                = YES
    )

//
// Filters
//

//
// Optimizers
//

//
// Resources
//

//
// Protocols
//


protocol 'Calibration-9p_psycho3' {
    report ('******** STARTING CALIBRATION ********')
    start_device_io (Eyelink)
    clear_calibration (EyeCalibrator)
    cnt                                 = 0
    CTRL_ITI_ms                         = 1000
    CTRL_fixation_duration_ms           = 1000

    trial {
        task 'Calibration System' {

            state BEGIN_STATE_SYSTEM {
                lst_value               = EYE_pos
                fixationPoint_posX      = ((lst_value % 3) - 1) * 5
                fixationPoint_posY      = (floor((lst_value-1)/3) - 1) * 5

                report ('Calibration Trial; Fixation point at x= $fixationPoint_posX , y= $fixationPoint_posY , fixation width = $CTRL_fixationWidth_dva')

                goto (SHOW_CALIBRATION_POINT)
            }
            
            state SHOW_CALIBRATION_POINT {
                live_queue_stimulus (fixationPoint_psycho3)
                report ($IO_fixation_flag)
                report ('Calibration Trial; Fixation point at x= $fixationPoint_posX , y= $fixationPoint_posY , fixation width = $CTRL_fixationWidth_dva')
                update_stimulus_display ()

                goto (
                    target              = PRE_AQUIRE
                    when                = IO_fixation_flag
                    )
            }
            
            state PRE_AQUIRE {
                report ('Pre Fixation Time ...')
                report ($IO_fixation_flag)

                start_timer (
                    timer               = PreAquireTimer
                    duration            = 250
                    duration_units      = ms
                    )

                goto (
                    target              = SHOW_CALIBRATION_POINT
                    when                = NOT( IO_fixation_flag )
                    )
                timer_expired (
                    target              = CALIBRATION_AQUIRE
                    timer               = PreAquireTimer
                    )
            }
            
            state CALIBRATION_AQUIRE {
                play_sound (Acquire_sound)
                start_timer (
                    timer               = fixation_timer
                    duration            = CTRL_fixation_duration_ms
                    duration_units      = ms
                    )

                begin_calibration_average (EyeCalibrator)
                report ('====== GETTING SAMPLES ======')

                goto (
                    target              = FIXATION_BREAK
                    when                = NOT( IO_fixation_flag )
                    )
                timer_expired (
                    target              = ACCEPT_SAMPLES
                    timer               = fixation_timer
                    )
            }
            
            state ACCEPT_SAMPLES {
                end_calibration_average_and_take_sample (
                    calibrator          = EyeCalibrator
                    calibratable_object = fixationPoint_psycho3
                    )
                
                cnt                     += 1
                play_sound (Reward_sound)
                dequeue_stimulus (fixationPoint_psycho3)
                update_stimulus_display ()
                accept_selections (EYE_pos)
                report ('Fixation Maintained -- Trial Accepted !!!')

                start_timer (
                    timer               = ITI_Timer
                    duration            = CTRL_ITI_ms
                    duration_units      = ms
                    )

                goto (
                    when                = cnt >= 9
                    target              = EXIT_STATE_SYSTEM
                    )
                goto ('PAUSE')

            }
            
            state FIXATION_BREAK {
                play_sound (Failure_sound)
                end_calibration_average_and_ignore (EyeCalibrator)
                dequeue_stimulus (fixationPoint_psycho3)
                update_stimulus_display ()
                reject_selections (EYE_pos)
                report ('Fixation Lost -- Trial Rejected.')

                start_timer (
                    timer               = ITI_Timer
                    duration            = CTRL_ITI_ms
                    duration_units      = ms
                    )

                goto (
                    when                = cnt >= 9
                    target              = EXIT_STATE_SYSTEM
                    )  

                goto ('PAUSE')
            }

            state PAUSE {
                goto (
                    target              = 'BEGIN_STATE_SYSTEM'
                    when                = timer_expired(ITI_Timer)
                    )
            }
            
            state EXIT_STATE_SYSTEM {
                reset_selection (EYE_pos)
                report ('Starting ITI of 1000 ms')
                wait (
                    duration            = CTRL_ITI_ms
                    duration_units      = ms
                    )
                yield ()
            }
        }            
    }
    update_calibration (EyeCalibrator)
    update_stimulus_display ()
    stop_device_io (Eyelink)
}

protocol 'Calibration-9p_psycho4' {
    report ('******** STARTING CALIBRATION ********')
    start_device_io (getStream)
    clear_calibration (EyeCalibrator2)
    cnt                                 = 0
    CTRL_ITI_ms                         = 1000
    CTRL_fixation_duration_ms           = 1000

    trial {
        task 'Calibration System' {

            state BEGIN_STATE_SYSTEM {
                lst_value               = EYE_pos
                fixationPoint_posX      = ((lst_value % 3) - 1) * 5
                fixationPoint_posY      = (floor((lst_value-1)/3) - 1) * 5

                report ('Calibration Trial; Fixation point at x= $fixationPoint_posX , y= $fixationPoint_posY , fixation width = $CTRL_fixationWidth_dva')

                goto (SHOW_CALIBRATION_POINT)
            }
            
            state SHOW_CALIBRATION_POINT {
                live_queue_stimulus (fixationPoint_psycho4)
                report ($IO_fixation2_flag)
                report ('Calibration Trial; Fixation point at x= $fixationPoint_posX , y= $fixationPoint_posY , fixation width = $CTRL_fixationWidth_dva')
                update_stimulus_display ()

                goto (
                    target              = PRE_AQUIRE
                    when                = IO_fixation2_flag
                    )
            }
            
            state PRE_AQUIRE {
                report ('Pre Fixation Time ...')
                report ($IO_fixation2_flag)

                start_timer (
                    timer               = PreAquireTimer
                    duration            = 250
                    duration_units      = ms
                    )

                goto (
                    target              = SHOW_CALIBRATION_POINT
                    when                = NOT( IO_fixation2_flag )
                    )
                timer_expired (
                    target              = CALIBRATION_AQUIRE
                    timer               = PreAquireTimer
                    )
            }
            
            state CALIBRATION_AQUIRE {
                play_sound (Acquire_sound)
                start_timer (
                    timer               = fixation_timer
                    duration            = CTRL_fixation_duration_ms
                    duration_units      = ms
                    )

                begin_calibration_average (EyeCalibrator2)
                report ('====== GETTING SAMPLES ======')

                goto (
                    target              = FIXATION_BREAK
                    when                = NOT( IO_fixation2_flag )
                    )
                timer_expired (
                    target              = ACCEPT_SAMPLES
                    timer               = fixation_timer
                    )
            }
            
            state ACCEPT_SAMPLES {
                end_calibration_average_and_take_sample (
                    calibrator          = EyeCalibrator2
                    calibratable_object = fixationPoint_psycho4
                    )
                
                cnt                     += 1
                play_sound (Reward_sound)
                dequeue_stimulus (fixationPoint_psycho4)
                update_stimulus_display ()
                accept_selections (EYE_pos)
                report ('Fixation Maintained -- Trial Accepted !!!')

                start_timer (
                    timer               = ITI_Timer
                    duration            = CTRL_ITI_ms
                    duration_units      = ms
                    )

                goto (
                    when                = cnt >= 9
                    target              = EXIT_STATE_SYSTEM
                    )
                goto ('PAUSE')

            }
            
            state FIXATION_BREAK {
                play_sound (Failure_sound)
                end_calibration_average_and_ignore (EyeCalibrator2)
                dequeue_stimulus (fixationPoint_psycho4)
                update_stimulus_display ()
                reject_selections (EYE_pos)
                report ('Fixation Lost -- Trial Rejected.')

                start_timer (
                    timer               = ITI_Timer
                    duration            = CTRL_ITI_ms
                    duration_units      = ms
                    )

                goto (
                    when                = cnt >= 9
                    target              = EXIT_STATE_SYSTEM
                    )  

                goto ('PAUSE')
            }

            state PAUSE {
                goto (
                    target              = 'BEGIN_STATE_SYSTEM'
                    when                = timer_expired(ITI_Timer)
                    )
            }
            
            state EXIT_STATE_SYSTEM {
                reset_selection (EYE_pos)
                report ('Starting ITI of 1000 ms')
                wait (
                    duration            = CTRL_ITI_ms
                    duration_units      = ms
                    )
                yield ()
            }
        }            
    }
    update_calibration (EyeCalibrator2)
    stop_device_io (getStream)
    update_stimulus_display ()
}

protocol 'Pre-test SNR' {
    start_device_io (mIO)
    start_device_io (Eyelink)
    live_queue_stimulus (Background)
    live_queue_stimulus (cursor)
    update_stimulus_display ()
    
    CTRL_RequiredHitNo                  = 400
    CTRL_PreSNR_StimDuration            = 1000
    CTRL_start_area_size                = 4 
    CTRL_start_area_alpha               = 1
    CTRL_target_size                    = 3
    CTRL_target_alpha                   = .5
    CTRL_ITI_ms                         = 1000
    INFO_HitCounter                     = 0
    INFO_ErrorCounter                   = 0
    TRIAL_start                         = 0
    TRIAL_end                           = 0
    CTRL_fixationWidth_dva              = CTRL_start_area_size+1

    trial 'Main Task System' {
        task LOOP {
            state 'Wait for Joystick Reset' {
                live_queue_stimulus (start_area)
                live_queue_stimulus (fixationCross)
                update_stimulus_display ()

                goto (
                    target              = 'New Trial'
                    when                = CTRL_start_area_flag && IO_fixation_flag
                    )
                goto (
                    target              = 'Wait for Joystick Reset'
                    when                = CTRL_start_area_flag == 0
                    )
            }

            state 'New Trial' {        
                ML_sync                 = 1
                TRIAL_start             = TRIAL_start + 1
                TRIAL_align             = 1
                INFO_task               = "pre-test_SNR"

                RDP_direction           = disc_rand(0,359)
                RDP_coherence           = SEL_snr

                live_queue_stimulus (RDP)
                live_queue_stimulus (start_area)
            	live_queue_stimulus (fixationCross)
                update_stimulus_display ()

                start_timer (
                    timer               = RDP_Timer
                    duration            = CTRL_PreSNR_StimDuration
                    duration_units      = ms
                    )

                report ('===== TRIAL $TRIAL_start START =====')
                report ('Coherence: $RDP_coherence')

                goto ('Update Stimulus')
            }

            state 'Update Stimulus' {
                goto (
                    target              = 'False Alarm'
                    when                = CTRL_start_area_flag == 0
                    )
                goto (
                    target              = 'Fixation Break'
                    when                = IO_fixation_flag == 0
                    )
                goto (
                    target              = 'Show Target'
                    when                = timer_expired(RDP_Timer)
                    )
            }

            state 'Show Target' {
                // Calculate target coordinates
                CTRL_target_x           = sin((RDP_direction)*(pi/180)) * CTRL_target_offset
                CTRL_target_y           = cos((RDP_direction)*(pi/180)) * CTRL_target_offset
                
                CTRL_target2_x          = sin((RDP_direction+90)*(pi/180)) * CTRL_target_offset
                CTRL_target2_y          = cos((RDP_direction+90)*(pi/180)) * CTRL_target_offset
                
                CTRL_target3_x          = sin((RDP_direction+180)*(pi/180)) * CTRL_target_offset
                CTRL_target3_y          = cos((RDP_direction+180)*(pi/180)) * CTRL_target_offset
                
                CTRL_target4_x          = sin((RDP_direction+270)*(pi/180)) * CTRL_target_offset
                CTRL_target4_y          = cos((RDP_direction+270)*(pi/180)) * CTRL_target_offset

                report ('-- Show Targets --')
                dequeue_stimulus (start_area)
                dequeue_stimulus (RDP)
                live_queue_stimulus (target)
                live_queue_stimulus (target2)
                live_queue_stimulus (target3)
                live_queue_stimulus (target4)
                live_queue_stimulus (cursor)
                update_stimulus_display ()

                TRIAL_reactionTrigger   = 1

                goto ('Response Window')
            }

            state 'Response Window' {
                goto (
                    target              = Hit
                    when                = CTRL_target_flag 
                    )
                goto (
                    target              = Error
                    when                = CTRL_target2_flag || CTRL_target3_flag || CTRL_target4_flag
                    )
            }

            state Hit {
                TRIAL_reactionEvent     = 1
                TRIAL_outcome           = "hit"
                INFO_HitCounter         = INFO_HitCounter + 1
                                            
                play_sound (Acquire_sound)
                accept_selections (SEL_snr)
                report ('-- Outcome: hit --')
                goto ('End Trial')
            }

            state Error {
                TRIAL_outcome           = "wrong"
                INFO_ErrorCounter       = INFO_ErrorCounter + 1

                play_sound (Acquire_sound)
                accept_selections (SEL_snr)
                report ('-- Outcome: wrong --')
                goto ('End Trial')
            }

            state 'False Alarm' {
                TRIAL_reactionEvent     = 1
                TRIAL_outcome           = "early"
               
                play_sound (Failure_sound)
                reject_selections(SEL_snr)
                report ('-- Outcome: early --')
                goto ('End Trial')
            }

            state 'Fixation Break' {
                TRIAL_reactionEvent     = 1
                TRIAL_outcome           = "brokeFixation"

                play_sound (Failure_sound)
                reject_selections(SEL_snr)
                report ('-- Outcome: brokeFixation --')
                goto ('End Trial')
            }

            state 'End Trial' {
                start_timer (
                    timer               = ITI_Timer
                    duration            = CTRL_ITI_ms
                    duration_units      = ms
                    )

                dequeue_stimulus (target)
                dequeue_stimulus (target2)
                dequeue_stimulus (target3)
                dequeue_stimulus (target4)
                dequeue_stimulus (start_area)
                dequeue_stimulus (fixationCross)
                dequeue_stimulus (RDP)
                update_stimulus_display ()

                TRIAL_reactionTrigger   = 0
                TRIAL_reactionEvent     = 0
                ML_sync                 = 0
                TRIAL_align             = 0
                TRIAL_end               = TRIAL_start

                report ('==== END OF TRIAL $TRIAL_end ====')

                goto (
                    target              = 'End paradigm'
                    when                = (INFO_HitCounter + INFO_ErrorCounter) >= CTRL_RequiredHitNo
                    )
                goto ('ITI')
            }

            state 'ITI' {
                timer_expired (
                    target              = 'Wait for Joystick Reset'
                    timer               = ITI_Timer
                    )
            }

            state 'End paradigm' {
                report ('==== $INFO_HitCounter CORRECT COINS COLLECTED ====')
                report ('==== $INFO_ErrorCounter WRONG COINS COLLECTED ====')
                report ('==== ENDING PARADIGM ====')
                play_sound (End_sound)
                yield ()
            }
        }
    }
    stop_device_io (Eyelink)
}

protocol 'Pre-test RT' {
    start_device_io (mIO)
    live_queue_stimulus (Background)
    live_queue_stimulus (cursor)
        
    CTRL_RequiredHitNo                  = 200
    CTRL_PreRT_ResponseWindow           = 5000
    CTRL_target_size                    = 4
    CTRL_target_alpha                   = .5
    CTRL_start_area_size                = 3 
    CTRL_start_area_alpha               = .3
    CTRL_ITI_ms                         = 1000
    INFO_HitCounter                     = 0
    INFO_ErrorCounter                   = 0
    TRIAL_start                         = 0
    TRIAL_end                           = 0
    COL_start_area_r 					= 1
	COL_start_area_g 					= 1
	COL_start_area_b 					= 1
	
    update_stimulus_display ()

    trial 'Main Task System' {
        task LOOP {
            state 'Wait for Joystick Reset' {
                live_queue_stimulus (start_area)
                update_stimulus_display ()
                
                goto (
                    target              = 'New Trial'
                    when                = CTRL_start_area_flag
                    )
                goto (
                    target              = 'Wait for Joystick Reset'
                    when                = CTRL_start_area_flag == 0
                    )
            }

            state 'New Trial' {
                ML_sync                 = 1
                TRIAL_start             = TRIAL_start + 1
                TRIAL_align             = 1
                INFO_task               = "pre-test_RT"

                start_timer (
                    timer               = TargetTimer
                    duration            = disc_rand(500,1000)
                    duration_units      = ms
                    )

                report ('===== TRIAL $TRIAL_start START =====')
                goto ('Wait for Target')
            }

            state 'Wait for Target' {
                goto (
                    target              = 'False Alarm'
                    when                = timer_expired(TargetTimer) == false && CTRL_start_area_flag == false
                    )                
                goto (
                    target              = 'Show Target'
                    when                = timer_expired(TargetTimer)
                    )
            }

            state 'Show Target' {
                report ('-- Show Target --')
                CTRL_target_direction   = disc_rand(0,359)
                CTRL_target_x           = sin((CTRL_target_direction)*(pi/180)) * (3 + (CTRL_target_size/2))
                CTRL_target_y           = cos((CTRL_target_direction)*(pi/180)) * (3 + (CTRL_target_size/2))

                dequeue_stimulus (start_area)
                live_queue_stimulus (target)
                update_stimulus_display ()

                TRIAL_reactionTrigger       = 1
                TRIAL_reactionTrigger_ts    = now()

                start_timer (
                    timer               = ResponseTimer
                    duration            = CTRL_PreRT_ResponseWindow
                    duration_units      = ms
                    )

                update_stimulus_display ()
                goto ('Response Window')
            }

            state 'Response Window' {
                goto (
                    target              = 'Hit'
                    when                = CTRL_target_flag == true
                    //when                = CTRL_start_area_flag == false
                    )
                timer_expired (
                    target              = 'Miss'
                    timer               = ResponseTimer
                    )
            }

            state 'Hit' {
                TRIAL_reactionEvent     = 1
                TRIAL_reactionEvent_ts  = now()
                TRIAL_RT                = (TRIAL_reactionEvent_ts - TRIAL_reactionTrigger_ts)/1000
                TRIAL_outcome           = "hit"
                INFO_HitCounter         = INFO_HitCounter + 1
                
                play_sound (Reward_sound)                
                report ('-- Outcome: Hit --')
                report ('RT: $TRIAL_RT')

                goto ('End Trial')
            }

            state 'Miss' {
                TRIAL_outcome           = "miss"
                TRIAL_RT                = 0

                play_sound (Failure_sound)
                report ('-- Outcome: Miss --')
                goto ('End Trial')
            }

            state 'False Alarm' {
                TRIAL_reactionEvent     = 1
                TRIAL_outcome           = "false alarm"
                TRIAL_RT                = 0

                play_sound (Failure_sound)
                report ('-- Outcome: False alarm --')
                goto ('End Trial')
            }

            state 'End Trial' {
                start_timer (
                    timer               = ITI_Timer
                    duration            = CTRL_ITI_ms
                    duration_units      = ms
                    )

                dequeue_stimulus (target)
                dequeue_stimulus (start_area)
                update_stimulus_display ()

                TRIAL_reactionTrigger   = 0
                TRIAL_reactionEvent     = 0
                TRIAL_align             = 0
                TRIAL_end               = TRIAL_start
                ML_sync                 = 0
                
                report ('==== END OF TRIAL $TRIAL_end ====')
                goto (
                    target              = 'End paradigm'
                    when                = INFO_HitCounter >= CTRL_RequiredHitNo
                    )
                goto ('ITI')
            }

            state 'ITI' {
                timer_expired (
                    target              = 'Wait for Joystick Reset'
                    timer               = ITI_Timer
                    )
            }

            state 'End paradigm' {
                report ('==== $INFO_HitCounter COINS COLLECTED ====')
                report ('==== ENDING PARADIGM ====')
                play_sound (End_sound)
                yield ()
            }
        }
    }
}

protocol 'CPR_solo' {
    report ('Hello! Starting Experiment...')
    start_device_io (Eyelink)
    start_device_io (mIO)
    live_queue_stimulus (Background)
    update_stimulus_display ()

    // Set desired parameters
    CTRL_NoTargets                              = 400
    CTRL_NoSteadyStates                         = 100
    CTRL_NoCoherenceStates                      = 10 
    CTRL_steadyState_min_ms                     = 1250 
    CTRL_steadyState_max_ms                     = 2500
    CTRL_cpr_treshold                           = .15
    CTRL_arc_alpha                              = 1
    CTRL_arc_size                               = 3
    CTRL_indicator_size                         = .3
    CTRL_start_area_size                        = 4 
    CTRL_start_area_alpha                       = 1
    CTRL_target_size                            = .5
    CTRL_target_deg                             = 2 * (asin( (CTRL_target_size/2) / ((CTRL_start_area_size/2) + (CTRL_target_size/2)) ) * (180/pi))
    CTRL_target_duration_ms                 	= 50
    CTRL_target_ITI_ms                          = 300
	CTRL_target_alpha                   		= 1
    CTRL_fixationWidth_dva                      = CTRL_start_area_size+1
    CTRL_ITI_ms                                 = 3000
    CTRL_targetBar_width                        = 360
    CTRL_scoreBar_width                         = 0
    COL_start_area_r 							= 1
	COL_start_area_g 							= 1
	COL_start_area_b 							= 1
	
    // Reset counters
    TRIAL_start                                 = 0
    TRIAL_end                                   = 0
    INFO_SteadyStateCounter                     = 0
    INFO_CoherenceStateCounter                  = 0
    INFO_TargetCounter                          = 0
    INFO_HitCounter                             = 0
    INFO_ErrorCounter                           = 0
    INFO_Cash                                   = 0

    trial 'Trial Structure' {
        task LOOP {

            state 'Wait for Joystick Reset' {
                live_queue_stimulus (start_area)
                update_stimulus_display ()

                goto (
                    target                      = 'Wait for Joystick Movement'
                    when                        = (IO_joystickStrength <= CTRL_cpr_treshold) 
                    )
            }
            
            state 'Wait for Joystick Movement' {
            	COL_start_area_r 				= 1
				COL_start_area_g 				= 1
				COL_start_area_b 				= 1
				
                goto (
                    target                      = 'New Trial'
                    when                        = (IO_joystickStrength > CTRL_cpr_treshold) 
                    )
            }

            state 'New Trial' { 
            	COL_start_area_r 				= 0
				COL_start_area_g 				= 0
				COL_start_area_b 				= 0
                TRIAL_start                   	+= 1
                TRIAL_align                     = 1
                ML_sync                         = 1
                INFO_SteadyStateCounter         = 0
                INFO_CoherenceStateCounter      = 0
                INFO_task                       = "CPR_solo_stepfunction_neutral"

                // Initial trial specs
                RDP_direction                   = disc_rand(0,359)
                RDP_coherence                   = CTRL_snr_list[disc_rand(0,size(CTRL_snr_list)-1)]

          		// Start with easiest condition
                if (TRIAL_start == 1) {
                    RDP_coherence               = CTRL_snr_list[size(CTRL_snr_list)-1]
                }

                report ('===== TRIAL $TRIAL_start STARTS =====')
                goto ('Show Stimuli')
            }

            state 'Show Stimuli' {
                live_queue_stimulus (scoreBarBackground)
                live_queue_stimulus (scoreBar)
                live_queue_stimulus (scoreBarMask)
                live_queue_stimulus (targetBarBackground)
                live_queue_stimulus (targetBar)
                live_queue_stimulus (targetBarMask)
                live_queue_stimulus (RDP)
                live_queue_stimulus (start_area)
                live_queue_stimulus (arc)
                live_queue_stimulus (arcMask)
                live_queue_stimulus (indicator)
                live_queue_stimulus (fixationCross)
                update_stimulus_display ()                
                goto ('Dequeue Target')
            }

            state 'Dequeue Target' {
                //Remove existing targets from screen
                dequeue_stimulus (target)
                dequeue_stimulus (feedback)
                update_stimulus_display ()
                
                // Reset flag
                TRIAL_reactionTrigger           = 0
                CTRL_hit_flag                   = 0
                CTRL_miss_flag                  = 0

                goto ('Check Counters')

            }

            state 'Check Counters' {
                goto (
                    target                      = 'End Trial'
                    when                        = (INFO_SteadyStateCounter >= CTRL_NoSteadyStates) || (INFO_TargetCounter >= CTRL_NoTargets)
                    )
                goto (
                    target                      = 'Update Stimuli'
                    when                        =  timer_expired(SteadyStateDurationTimer) == 0
                    )
                goto (
                    target                      = 'Set up steady state'
                    when                        =  timer_expired(SteadyStateDurationTimer) 
                    )
            }

            state 'Set up steady state' {
            	// Sync Matlab & reset flags
                ML_sync                         = 0
                ML_sync                         = 1

                // Draw state parameters
                CTRL_SteadyStateDuration_ms     = disc_rand(CTRL_steadyState_min_ms,CTRL_steadyState_max_ms) // Duration of state
                CTRL_change_mangitude           = CTRL_directionChange_list[disc_rand(0,size(CTRL_directionChange_list)-1)] // Magnitude of RDP direction change
                TMP_dice                        = disc_rand(0,1) // Clockwise vs Counter-clockwise RDP direction change
                INFO_SteadyStateCounter         = INFO_SteadyStateCounter + 1

                // Change RDP coherence after N states
                if (INFO_CoherenceStateCounter >= CTRL_NoCoherenceStates) {
                    INFO_CoherenceStateCounter  = 0
                    RDP_coherence               = CTRL_snr_list[disc_rand(0,size(CTRL_snr_list)-1)]
                }
                
                // Keep track of number of states with same coherence level
                INFO_CoherenceStateCounter      = INFO_CoherenceStateCounter + 1
                TRIAL_type                      = format("Coh %d", (integer)RDP_coherence)

                if (INFO_SteadyStateCounter > 1) {
                    // Draw change direction
                    TMP_dice                    = disc_rand(0,1)

                    // Draw magnitude of change
                    if (TMP_dice == 1) {
                        RDP_direction           = RDP_direction + CTRL_change_mangitude
                    }

                    if (TMP_dice == 0) {
                        RDP_direction           = RDP_direction - CTRL_change_mangitude
                    }
                }

                start_timer (
                    timer                       = SteadyStateDurationTimer
                    duration                    = CTRL_SteadyStateDuration_ms
                    duration_units              = ms
                    )

                /* // Block target appearance in time window after state onset
                start_timer (
                    timer                       = NoTargetTimer_StateOnset
                    duration                    = 500
                    duration_units              = ms
                    )
                */

                report ('--- Steady state $INFO_SteadyStateCounter ---')
                goto ('Update Stimuli')
            }


			state 'Update Stimuli' { 
                goto (                    
                    target                      = 'Fixation break detected'
                    when                        = (IO_fixation_flag == 0 && CTRL_fixation_break_flag == 0) 
                    )
                goto (                    
                    target                      = 'Reset CTRL_fixation_break_flag'
                    when                        = (IO_fixation_flag && CTRL_fixation_break_flag && timer_expired(MinFixationBreakTimer) == 0) 
                    )                
                goto (                    
                    target                      = 'Fixation break penalty'
                    when                        = (IO_fixation_flag == 0 && timer_expired(MinFixationBreakTimer) && CTRL_fixation_break_flag && CTRL_fixation_penalty_flag == 0)
                    )
                goto (                    
                    target                      = 'Fixation restored'
                    when                        = (IO_fixation_flag && timer_expired(FixBreakPenaltyTimer) && CTRL_fixation_break_flag) 
                    )
                goto (
                    target                      = 'Dequeue Target'
                    when                        = CTRL_hit_flag && timer_expired(FeedbackTimer) && TRIAL_reactionTrigger
                    )
                goto (
                    target                      = 'Target presentation'
                    when                        = CTRL_target_idx == 0 && TRIAL_reactionTrigger == 0 && timer_expired(NoTargetTimer) //&& timer_expired(NoTargetTimer_StateOnset)
                    ) 
                goto (
                    target                      = 'Hit'
                    when                        = CTRL_arc_flag && TRIAL_reactionTrigger && (CTRL_hit_flag + CTRL_miss_flag) == 0 && timer_expired(TargetDurationTimer) == 0 && (IO_fixation_flag && CTRL_fixation_break_flag == 0)
                    )  
                goto (
                    target                      = 'Miss'
                    when                        = timer_expired(TargetDurationTimer) && TRIAL_reactionTrigger && (CTRL_hit_flag + CTRL_miss_flag) == 0
                    )              
                goto (
                    target                      = 'Check Counters'
                    when                        = timer_expired(SteadyStateDurationTimer) && TRIAL_reactionTrigger == 0
                    )
            }
           
            state 'Fixation break detected' {
                CTRL_fixation_break_flag        = 1

                start_timer (
                    timer                       = MinFixationBreakTimer
                    duration                    = CTRL_minFixBreak_duration_ms
                    duration_units              = ms
                    )
                    
                report ('FIX BREAK')
                
                goto ('Update Stimuli')
            }

            state 'Reset CTRL_fixation_break_flag' {
                    CTRL_fixation_break_flag        = 0
                    report ('FIX RESET')
                    goto ('Update Stimuli')
            }

            state 'Fixation break penalty' {
                CTRL_fixation_size              = .75
                COL_fix_r                       = 1
                COL_fix_b                       = 0
                COL_fix_g                       = 0
                CTRL_arc_alpha                  = 0
                CTRL_indicator_alpha            = 0
                CTRL_fixation_penalty_flag 		= 1

                start_timer (
                    timer                       = FixBreakPenaltyTimer
                    duration                    = CTRL_fixBreak_penalty_duration_ms
                    duration_units              = ms
                    )
                
                report ('FIX PENALTY')
                
                goto ('Update Stimuli')
            }

            state 'Fixation restored' {
                CTRL_fixation_size              = .3
                COL_fix_r                       = 1
                COL_fix_b                       = 1
                COL_fix_g                       = 1
                CTRL_arc_alpha                  = 1
                CTRL_indicator_alpha            = 1
                CTRL_fixation_break_flag        = 0
                CTRL_fixation_penalty_flag 		= 0

                report ('FIX RESTORED')

                goto ('Update Stimuli')
            }

       		state 'Target presentation' {
            	// Target coordinates according to RDP direction
                CTRL_target_x                   = (sin((RDP_direction)*(pi/180)) * ((CTRL_start_area_size/3))) + RDP_x
                CTRL_target_y                   = (cos((RDP_direction)*(pi/180)) * ((CTRL_start_area_size/3))) + RDP_y

                live_queue_stimulus (target)
                update_stimulus_display ()

                TRIAL_reactionTrigger           = 1
                INFO_TargetCounter              = INFO_TargetCounter + 1
                CTRL_targetBar_width            = CTRL_targetBar_width - (360/CTRL_NoTargets) 

                start_timer (
                    timer                       = TargetDurationTimer
                    duration                    = CTRL_target_duration_ms
                    duration_units              = ms
                    )

                // Block target appearance
                start_timer (
                    timer                       = NoTargetTimer
                    duration                    = (CTRL_target_duration_ms + CTRL_target_ITI_ms)
                    duration_units              = ms
                    )

                report ('--- SHOW TARGET $INFO_TargetCounter ---')
                goto ('Update Stimuli')
            }

            state 'Hit' {
            	// Auditory feedback
            	if (TMP_Cash > CTRL_cash_per_target*.9) {
            		play_sound (SuperReward_sound)
            	}

                if (TMP_Cash > CTRL_cash_per_target*.75 && TMP_Cash <= CTRL_cash_per_target*.9) {
                    play_sound (Reward_sound_3)
                }

                if (TMP_Cash > CTRL_cash_per_target*.5 && TMP_Cash <= CTRL_cash_per_target*.75) {
                    play_sound (Reward_sound_2)
                }

            	if (TMP_Cash <= CTRL_cash_per_target*.5) {
            		play_sound (Reward_sound)
            	}

				//Visual feedback
				live_queue_stimulus (feedback)
				live_queue_stimulus (fixationCross)
                update_stimulus_display ()

               	// Set flags and add to counters
                TRIAL_outcome                   = "hit"
                CTRL_hit_flag                   = 1

                INFO_HitCounter                 = INFO_HitCounter + 1
                INFO_Cash                		= INFO_Cash + TMP_Cash
                CTRL_scoreBar_width             = 360 * (INFO_Cash / (CTRL_NoTargets * CTRL_cash_per_target))

                report ('--- OUTCOME: Hit ---')
                report ('CASH: $TMP_Cash')

                start_timer (
                    timer                       = FeedbackTimer
                    duration                    = CTRL_feedback_ms
                    duration_units              = ms
                    )

                goto ('Update Stimuli')
            }
    
            state 'Miss' {
                //play_sound (Failure_sound)

                // Set flags
                TRIAL_outcome                   = "miss"
                CTRL_miss_flag                  = 1

                report ('--- OUTCOME: Miss ---')

                goto (
                    target                      = 'End Trial'
                    when                        = (INFO_SteadyStateCounter >= CTRL_NoSteadyStates) || (INFO_TargetCounter >= CTRL_NoTargets)
                    )
                goto ('Dequeue Target')
            }  

            state 'End Trial' {
                dequeue_stimulus (targetBarBackground)
                dequeue_stimulus (targetBar)
                dequeue_stimulus (targetBarMask)
                dequeue_stimulus (scoreBarBackground)
                dequeue_stimulus (scoreBar)
                dequeue_stimulus (scoreBarMask)
                dequeue_stimulus (RDP)
                dequeue_stimulus (start_area)
                dequeue_stimulus (arc)
                dequeue_stimulus (arcMask)
                dequeue_stimulus (indicator)
                dequeue_stimulus (fixationCross)
                dequeue_stimulus (target)

                ML_sync                         = 0
                TRIAL_align                     = 0
                TRIAL_end                     	= TRIAL_start

                start_timer (
                    timer                       = ITI_Timer
                    duration                    = CTRL_ITI_ms
                    duration_units              = ms
                    )

                update_stimulus_display ()
                report ('===== TRIAL $TRIAL_end ENDS =====')
                goto (ITI)
            }

            state ITI {
                goto (
                    target                      = 'End paradigm'
                    when                        = INFO_TargetCounter >= CTRL_NoTargets && timer_expired(ITI_Timer)
                    )
                timer_expired (
                    target                      = 'Wait for Joystick Reset'
                    timer                       = ITI_Timer
                    )
            }
            state 'End paradigm' {
                update_stimulus_display ()
                report ('==== SUMMARY: $INFO_HitCounter / $INFO_TargetCounter COINS COLLECTED ====')
                report ('==== ENDING PARADIGM ====')
                play_sound (End_sound)
                yield ()
            }
        }
    }
    stop_device_io (Eyelink)
}

protocol 'CPR_dyatic' {
    report ('Hello! Starting Experiment...')
    start_device_io (mIO)
    start_device_io (Eyelink)
    start_device_io (getStream)
    live_queue_stimulus (Background)
    update_stimulus_display ()

    // Set desired parameters
    CTRL_NoTargets                              = 400
    CTRL_NoSteadyStates                         = 100
    CTRL_NoCoherenceStates                      = 10 
    CTRL_steadyState_min_ms                     = 1250 
    CTRL_steadyState_max_ms                     = 2500
    CTRL_arc_size                               = 3
    CTRL_arc_alpha                              = 1
    CTRL_indicator_size                         = .3
    CTRL_indicator_offset                       = 1.5
    CTRL_indicator2_offset                      = 1.75
    CTRL_cpr_treshold                           = .15
    CTRL_start_area_size                        = 4 
    CTRL_start_area_alpha                       = 1
    CTRL_target_size                            = .5
    CTRL_target_deg                             = 2 * (asin( (CTRL_target_size/2) / ((CTRL_start_area_size/2) + (CTRL_target_size/2)) ) * (180/pi))
    CTRL_target_duration_ms                     = 50
    CTRL_target_ITI_ms                          = 300
	CTRL_target_alpha                   		= 1
    CTRL_fixationWidth_dva                      = CTRL_start_area_size+1
    CTRL_ITI_ms                                 = 3000
    CTRL_targetBar_width                        = 360
    CTRL_scoreBar_width                         = 0
    COL_start_area_r                            = 1
    COL_start_area_g                            = 1
    COL_start_area_b                            = 1
    
    // Reset counters
    TRIAL_start                                 = 0
    TRIAL_end                                   = 0
    INFO_SteadyStateCounter                     = 0
    INFO_CoherenceStateCounter                  = 0
    INFO_TargetCounter                          = 0
    INFO_HitCounter                             = 0
    INFO_ErrorCounter                           = 0
    INFO_HitCounter2                            = 0
    INFO_ErrorCounter2                          = 0
    INFO_Cash                                   = 0
    INFO_Cash2                                  = 0

    trial 'Trial Structure' {
        task LOOP {

            state 'Wait for Joystick Reset' {
                live_queue_stimulus (start_area)
                update_stimulus_display ()

                goto (
                    target                      = 'Wait for Joystick Movement'
                    when                        = (IO_joystickStrength <= CTRL_cpr_treshold) && (IO_joystickStrength2 <= CTRL_cpr_treshold)  
                    )
            }
            
            state 'Wait for Joystick Movement' {
                COL_start_area_r                = 1
                COL_start_area_g                = 1
                COL_start_area_b                = 1
                
                goto (
                    target                      = 'New Trial'
                    when                        = (IO_joystickStrength > CTRL_cpr_treshold) && (IO_joystickStrength2 > CTRL_cpr_treshold)  
                    )
            }
            
            state 'New Trial' {
                COL_start_area_r                = 0
                COL_start_area_g                = 0
                COL_start_area_b                = 0
                TRIAL_start                     += 1
                TRIAL_align                     = 1
                ML_sync                         = 1
                INFO_SteadyStateCounter         = 0
                INFO_CoherenceStateCounter      = 0
                INFO_task                       = "CPR_dyadic_stepfunction_neutral"

                // Initial trial specs
                RDP_direction                   = disc_rand(0,359)
                RDP_coherence                   = CTRL_snr_list[disc_rand(0,size(CTRL_snr_list)-1)]

                // Start with easiest condition
                if (TRIAL_start == 1) {
                    RDP_coherence               = CTRL_snr_list[size(CTRL_snr_list)-1]
                }

                report ('===== TRIAL $TRIAL_start STARTS =====')
                goto ('Show Stimuli')
            }

            state 'Show Stimuli' {
                live_queue_stimulus (scoreBarBackground2)
                live_queue_stimulus (scoreBar2)
                live_queue_stimulus (scoreBarMask2)
                live_queue_stimulus (scoreBarBackground)
                live_queue_stimulus (scoreBar)
                live_queue_stimulus (scoreBarMask)
                live_queue_stimulus (targetBarBackground)
                live_queue_stimulus (targetBar)
                live_queue_stimulus (targetBarMask)
                live_queue_stimulus (RDP)
                live_queue_stimulus (start_area)
                live_queue_stimulus (arc2)
                live_queue_stimulus (arcMask2)
                live_queue_stimulus (arc)
                live_queue_stimulus (arcMask)
                live_queue_stimulus (indicator)
                live_queue_stimulus (indicator2)
                live_queue_stimulus (fixationCross)
                live_queue_stimulus (fixationCross2)
                update_stimulus_display () 

                goto ('Dequeue Target')
            }

            state 'Dequeue Target' {
                //Remove existing targets from screen
                dequeue_stimulus (target)
                dequeue_stimulus (feedback1)
                dequeue_stimulus (feedback2)
                update_stimulus_display ()
                
                TRIAL_reactionTrigger           = 0
                CTRL_hit_flag                   = 0
                CTRL_hit_flag2                  = 0
                CTRL_miss_flag                  = 0
                CTRL_miss_flag2                 = 0

                goto ('Check Counters')
            }

            state 'Check Counters' {
                goto (
                    target                      = 'End Trial'
                    when                        = (INFO_SteadyStateCounter >= CTRL_NoSteadyStates) || (INFO_TargetCounter >= CTRL_NoTargets)
                    )
                goto (
                    target                      = 'Update Stimuli'
                    when                        =  timer_expired(SteadyStateDurationTimer) == 0
                    )
                goto (
                    target                      = 'Set up steady state'
                    when                        =  timer_expired(SteadyStateDurationTimer) 
                    )
            }

            state 'Set up steady state' {
            // Sync Matlab & reset flags
                ML_sync                         = 0
                ML_sync                         = 1

                // Draw state parameters
                CTRL_SteadyStateDuration_ms     = disc_rand(CTRL_steadyState_min_ms,CTRL_steadyState_max_ms) // Duration of state
                CTRL_change_mangitude           = CTRL_directionChange_list[disc_rand(0,size(CTRL_directionChange_list)-1)] // Magnitude of RDP direction change
                TMP_dice                        = disc_rand(0,1) // Clockwise vs Counter-clockwise RDP direction change
                INFO_SteadyStateCounter         = INFO_SteadyStateCounter + 1

                // Change RDP coherence after N states
                if (INFO_CoherenceStateCounter >= CTRL_NoCoherenceStates) {
                    INFO_CoherenceStateCounter  = 0
                    RDP_coherence               = CTRL_snr_list[disc_rand(0,size(CTRL_snr_list)-1)]
                }
                
                // Keep track of number of states with same coherence level
                INFO_CoherenceStateCounter      = INFO_CoherenceStateCounter + 1
                TRIAL_type                      = format("Coh %d", (integer)RDP_coherence)

                if (INFO_SteadyStateCounter > 1) {
                    // Draw change direction
                    TMP_dice                    = disc_rand(0,1)

                    // Draw magnitude of change
                    if (TMP_dice == 1) {
                        RDP_direction           = RDP_direction + CTRL_change_mangitude
                    }

                    if (TMP_dice == 0) {
                        RDP_direction           = RDP_direction - CTRL_change_mangitude
                    }
                }

                start_timer (
                    timer                       = SteadyStateDurationTimer
                    duration                    = CTRL_SteadyStateDuration_ms
                    duration_units              = ms
                    )

                /* // Block target appearance in time window after state onset
                start_timer (
                    timer                       = NoTargetTimer_StateOnset
                    duration                    = 500
                    duration_units              = ms
                    )
                */

                report ('--- Steady state $INFO_SteadyStateCounter ---')
                goto ('Update Stimuli')
            }

            state 'Update Stimuli' {
                goto (                    
                    target                      = 'Fixation break detected'
                    when                        = (IO_fixation_flag == 0 && CTRL_fixation_break_flag == 0) || (IO_fixation2_flag == 0 && CTRL_fixation2_break_flag == 0)
                    )
                goto (                    
                    target                      = 'Reset CTRL_fixation_break_flag'
                    when                        = (IO_fixation_flag && CTRL_fixation_break_flag && timer_expired(MinFixationBreakTimer)==0) || (IO_fixation2_flag && CTRL_fixation2_break_flag && timer_expired(MinFixationBreakTimer2)==0)
                    )                
                goto (                    
                    target                      = 'Fixation break penalty'
                    when                        = (IO_fixation_flag == 0 && timer_expired(MinFixationBreakTimer) && CTRL_fixation_break_flag && CTRL_fixation_penalty_flag==0) || (IO_fixation2_flag == 0 && timer_expired(MinFixationBreakTimer2) && CTRL_fixation2_break_flag && CTRL_fixation2_penalty_flag==0)
                    )
                goto (                    
                    target                      = 'Fixation restored'
                    when                        = (IO_fixation_flag && timer_expired(FixBreakPenaltyTimer) && CTRL_fixation_break_flag) || (IO_fixation2_flag && timer_expired(FixBreakPenaltyTimer2) && CTRL_fixation2_break_flag)
                    )
                goto (
                    target                      = 'Dequeue Target'
                    when                        = (CTRL_hit_flag + CTRL_hit_flag2) > 0 && timer_expired(FeedbackTimer) && TRIAL_reactionTrigger
                    )
                goto (
                    target                      = 'Target presentation'
                    when                        = CTRL_target_idx == 0 && TRIAL_reactionTrigger == 0 && timer_expired(NoTargetTimer) //&& timer_expired(NoTargetTimer_StateOnset)
                    ) 
                goto (
                    target                      = 'Single Hit A'
                    when                        = CTRL_arc_flag && CTRL_arc2_flag == 0 && TRIAL_reactionTrigger && (CTRL_hit_flag + CTRL_hit_flag2 + CTRL_miss_flag + CTRL_miss_flag2) == 0 && timer_expired(TargetDurationTimer) == 0 && CTRL_fixation_penalty_flag == 0
                    ) 
                goto (
                    target                      = 'Single Hit B'
                    when                        = CTRL_arc_flag == 0 && CTRL_arc2_flag && TRIAL_reactionTrigger && (CTRL_hit_flag + CTRL_hit_flag2 + CTRL_miss_flag + CTRL_miss_flag2) == 0 && timer_expired(TargetDurationTimer) == 0 && CTRL_fixation2_penalty_flag == 0
                    )
                goto (
                    target                      = 'DoubleHit'
                    when                        = CTRL_arc_flag && CTRL_arc2_flag && TRIAL_reactionTrigger && (CTRL_hit_flag + CTRL_hit_flag2 + CTRL_miss_flag + CTRL_miss_flag2) == 0 && timer_expired(TargetDurationTimer) == 0 && (CTRL_fixation_penalty_flag == 0 && CTRL_fixation2_penalty_flag == 0)
                    )  
                goto (
                    target                      = 'DoubleMiss'
                    when                        = timer_expired(TargetDurationTimer) && TRIAL_reactionTrigger && (CTRL_hit_flag + CTRL_hit_flag2 + CTRL_miss_flag + CTRL_miss_flag2) == 0 
                    )              
                goto (
                    target                      = 'Check Counters'
                    when                        = timer_expired(SteadyStateDurationTimer) && TRIAL_reactionTrigger == 0
                    )
            }

            state 'Fixation break detected' {

                if (IO_fixation_flag == 0 && CTRL_fixation_break_flag == 0) {
                    report ('FIX BREAK A')
                    CTRL_fixation_break_flag      = 1

                    start_timer (
                        timer                       = MinFixationBreakTimer
                        duration                    = CTRL_minFixBreak_duration_ms
                        duration_units              = ms
                        )  
                }

                if (IO_fixation2_flag == 0 && CTRL_fixation2_break_flag == 0) {
                    report ('FIX BREAK B')
                    CTRL_fixation2_break_flag       = 1

                    start_timer (
                        timer                       = MinFixationBreakTimer2
                        duration                    = CTRL_minFixBreak_duration_ms
                        duration_units              = ms
                        )  
                }

                goto ('Update Stimuli')
            }

            state 'Reset CTRL_fixation_break_flag' {
                if (IO_fixation_flag && CTRL_fixation_break_flag && timer_expired(MinFixationBreakTimer)) {
                    report ('FIX BREAK RESET A')
                    CTRL_fixation_break_flag        = 0
                }

                if (IO_fixation2_flag && CTRL_fixation2_break_flag && timer_expired(MinFixationBreakTimer2)) {
                    report ('FIX BREAK RESET B')
                    CTRL_fixation2_break_flag       = 0
                }
            
            	goto ('Update Stimuli')

            }

            state 'Fixation break penalty' {

                if (IO_fixation_flag == 0 && CTRL_fixation_break_flag) {
                    report ('FIX BREAK PENALTY A')
                    CTRL_arc_alpha                  = 0
                    CTRL_indicator_alpha            = 0
                    CTRL_fixation_penalty_flag      = 1

                    start_timer (
                        timer                       = FixBreakPenaltyTimer
                        duration                    = CTRL_fixBreak_penalty_duration_ms
                        duration_units              = ms
                        )  
                }

                if (IO_fixation2_flag == 0 && CTRL_fixation2_break_flag) {
                    report ('FIX BREAK PENALTY B')
                    CTRL_arc2_alpha                 = 0
                    CTRL_indicator2_alpha           = 0
                    CTRL_fixation2_penalty_flag     = 1

                    start_timer (
                        timer                       = FixBreakPenaltyTimer2
                        duration                    = CTRL_fixBreak_penalty_duration_ms
                        duration_units              = ms
                        )  
                }

                goto ('Update Stimuli')
            }

            state 'Fixation restored' {

                if (IO_fixation_flag && timer_expired(FixBreakPenaltyTimer) && CTRL_fixation_break_flag) {
                    report ('FIX RESTORED A')
                    CTRL_arc_alpha                  = 1
                    CTRL_indicator_alpha            = 1
                    CTRL_fixation_break_flag        = 0
                    CTRL_fixation_penalty_flag      = 0
                }

                if (IO_fixation2_flag && timer_expired(FixBreakPenaltyTimer2) && CTRL_fixation2_break_flag) {
                    report ('FIX RESTORED B')
                    CTRL_arc2_alpha                 = 1
                    CTRL_indicator2_alpha           = 1
                    CTRL_fixation2_break_flag       = 0
                    CTRL_fixation2_penalty_flag     = 0
                }

                goto ('Update Stimuli')
            }

            state 'Target presentation' {
                // Target coordinates according to RDP direction
                CTRL_target_x                   = (sin((RDP_direction)*(pi/180)) * ((CTRL_start_area_size/3))) + RDP_x
                CTRL_target_y                   = (cos((RDP_direction)*(pi/180)) * ((CTRL_start_area_size/3))) + RDP_y
 
                live_queue_stimulus (target)
                update_stimulus_display ()

                TRIAL_reactionTrigger           = 1
                INFO_TargetCounter              = INFO_TargetCounter + 1
                CTRL_targetBar_width            = CTRL_targetBar_width - (360/CTRL_NoTargets) 

                start_timer (
                    timer                       = TargetDurationTimer
                    duration                    = CTRL_target_duration_ms
                    duration_units              = ms
                    )

                // Block target appearance
                start_timer (
                    timer                       = NoTargetTimer
                    duration                    = (CTRL_target_duration_ms + CTRL_target_ITI_ms)
                    duration_units              = ms
                    )

                report ('--- SHOW TARGET $INFO_TargetCounter ---')
                goto ('Update Stimuli')
            }

            state 'Single Hit A' {
                // PRESENT AT SPEAKER A ONLY
                // Auditory feedback
                if (TMP_Cash > .085) {
                    play_sound (SuperReward_sound)
                }

                if (TMP_Cash <= .085) {
                    play_sound (Reward_sound)
                }

                //Visual feedback
                live_queue_stimulus (feedback1)
                live_queue_stimulus (fixationCross)
                live_queue_stimulus (fixationCross2)
                update_stimulus_display ()

                // Set flags and add to counters
                TRIAL_outcome                   = "hit"
                CTRL_hit_flag                   = 1

                TRIAL_outcome2                  = "miss"
                CTRL_hit_flag2                  = 0

                INFO_HitCounter                 += 1
                INFO_Cash                       += TMP_Cash
                CTRL_scoreBar_width             = 360 * (INFO_Cash / (CTRL_NoTargets * CTRL_cash_per_target))

                report ('--- OUTCOME: Single Hit A ---')
                report ('CASH_A: $TMP_Cash')

                goto ('Start Feedback Timer')
            }

            state 'Single Hit B' {
                // PRESENT AT SPEAKER B ONLY
                // Auditory feedback
                if (TMP_Cash2 > .085) {
                    play_sound (SuperReward_sound)
                }

                if (TMP_Cash2 <= .085) {
                    play_sound (Reward_sound)
                }

                //Visual feedback
                live_queue_stimulus (feedback2)
            	live_queue_stimulus (fixationCross)
            	live_queue_stimulus (fixationCross2)
                update_stimulus_display ()

                // Set flags and add to counters
                TRIAL_outcome2                  = "hit"
                CTRL_hit_flag2                  = 1

                TRIAL_outcome                   = "miss"
                CTRL_hit_flag                   = 0

                INFO_HitCounter2                += + 1
                INFO_Cash2                      += TMP_Cash2
                CTRL_scoreBar2_width            = 360 * (INFO_Cash2 / (CTRL_NoTargets * CTRL_cash_per_target))

                report ('--- OUTCOME: Single Hit B ---')
                report ('CASH_B: $TMP_Cash2')

                goto ('Start Feedback Timer')
            }

            state 'DoubleHit' {
                // PRESENT AT RESPECTIVE SPEAKER
                // Auditory feedback
                if (TMP_Cash > .085) {
                    play_sound (SuperReward_sound)
                }

                if (TMP_Cash <= .085) {
                    play_sound (Reward_sound)
                }

                if (TMP_Cash2 > .085) {
                    play_sound (SuperReward_sound)
                }

                if (TMP_Cash2 <= .085) {
                    play_sound (Reward_sound)
                }

                //Visual feedback
                live_queue_stimulus (feedback1)
                live_queue_stimulus (feedback2)
            	live_queue_stimulus (fixationCross)
            	live_queue_stimulus (fixationCross2)
                update_stimulus_display ()
                
                // Set flags and add to counters
                TRIAL_outcome                   = "hit"
                CTRL_hit_flag                   = 1
                TRIAL_outcome2                  = "hit"
                CTRL_hit_flag2                  = 1

                INFO_HitCounter                 += 1
                INFO_Cash                       += TMP_Cash 
                CTRL_scoreBar_width             = 360 * (INFO_Cash / (CTRL_NoTargets * CTRL_cash_per_target))              
                INFO_HitCounter2                += 1
                INFO_Cash2                      += TMP_Cash2
                CTRL_scoreBar2_width            = 360 * (INFO_Cash2 / (CTRL_NoTargets * CTRL_cash_per_target))

                report ('--- OUTCOME: Double Hit ---')
                report ('CASH_A: $TMP_Cash || CASH_B: $TMP_Cash2')

                goto ('Start Feedback Timer')
            }  
                 
            state 'Start Feedback Timer'{
                start_timer (
                    timer                       = FeedbackTimer
                    duration                    = CTRL_feedback_ms
                    duration_units              = ms
                    )
                goto ('Update Stimuli')
            }

            state 'DoubleMiss' {
                //play_sound (Failure_sound)

                // Set flags
                TRIAL_outcome                   = "miss"
                CTRL_hit_flag                   = 0
                TRIAL_outcome2                  = "miss"
                CTRL_hit_flag2                  = 0

                report ('--- OUTCOME: Double Miss ---')

                goto (
                    target                      = 'End Trial'
                    when                        = (INFO_SteadyStateCounter >= CTRL_NoSteadyStates) || (INFO_TargetCounter >= CTRL_NoTargets)
                    )
                goto ('Dequeue Target')
            }  

            state 'End Trial' {
                dequeue_stimulus (targetBarBackground)
                dequeue_stimulus (targetBar)
                dequeue_stimulus (targetBarMask)
                dequeue_stimulus (scoreBarBackground)
                dequeue_stimulus (scoreBar)
                dequeue_stimulus (scoreBarMask)
                dequeue_stimulus (scoreBarBackground2)
                dequeue_stimulus (scoreBar2)
                dequeue_stimulus (scoreBarMask2)
                dequeue_stimulus (RDP)
                dequeue_stimulus (arc)
                dequeue_stimulus (arc2)
                dequeue_stimulus (start_area)
                dequeue_stimulus (indicator)
                dequeue_stimulus (indicator2)
                dequeue_stimulus (fixationCross)                
                dequeue_stimulus (fixationCross2)                
                dequeue_stimulus (target)

                ML_sync                         = 0
                TRIAL_align                     = 0
                TRIAL_end                       = TRIAL_start

                start_timer (
                    timer                       = ITI_Timer
                    duration                    = CTRL_ITI_ms
                    duration_units              = ms
                    )

                update_stimulus_display ()
                report ('===== TRIAL $TRIAL_end ENDS =====')
                goto (ITI)
            }

            state ITI {
                goto (
                    target                      = 'End paradigm'
                    when                        = INFO_TargetCounter >= CTRL_NoTargets && timer_expired(ITI_Timer)
                    )
                timer_expired (
                    target                      = 'Wait for Joystick Reset'
                    timer                       = ITI_Timer
                    )
            }
            state 'End paradigm' {
                update_stimulus_display ()
                report ('==== PLAYER_A: $INFO_HitCounter / $INFO_TargetCounter COINS COLLECTED ====')
                report ('==== PLAYER_B: $INFO_HitCounter2 / $INFO_TargetCounter COINS COLLECTED ====')
                report ('==== ENDING PARADIGM ====')
                play_sound (End_sound)
                yield ()
            }
        }
    }
	stop_device_io (getStream)
    stop_device_io (Eyelink)
}
